CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:833
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:44
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "preprocessed_panCK")
    Name to assign these images:preprocessed_panCK
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "preprocessed_aSMA")
    Name to assign these images:preprocessed_aSMA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "preprocessed_CD3.")
    Name to assign these images:preprocessed_CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "preprocessed_vimentin")
    Name to assign these images:preprocessed_vimentin
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "preprocessed_CD45")
    Name to assign these images:preprocessed_CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "preprocessed_CD31")
    Name to assign these images:preprocessed_CD31
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "preprocessed_CD8a")
    Name to assign these images:preprocessed_CD8a
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "preprocessed_CD4.")
    Name to assign these images:preprocessed_CD4
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "B2M")
    Name to assign these images:B2M
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CCR7")
    Name to assign these images:CCR7
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CD103")
    Name to assign these images:CD103
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CD25")
    Name to assign these images:CD25
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CD27")
    Name to assign these images:CD27
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Er_CD3")
    Name to assign these images:CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CD39")
    Name to assign these images:CD39
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Gd_CD4")
    Name to assign these images:CD4
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Sm_CD45")
    Name to assign these images:CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CD45RA")
    Name to assign these images:CD45RA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CD57")
    Name to assign these images:CD57
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Dy_CD8a")
    Name to assign these images:CD8a
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CTLA4")
    Name to assign these images:CTLA4
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CXCL12")
    Name to assign these images:CXCL12
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CXCR4")
    Name to assign these images:CXCR4
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CXCR6")
    Name to assign these images:CXCR6
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "collagen1")
    Name to assign these images:collagen1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "FOXP3")
    Name to assign these images:FOXP3
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "GATA3")
    Name to assign these images:GATA3
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "GITR")
    Name to assign these images:GITR
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "GZMB")
    Name to assign these images:GZMB
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ICOS")
    Name to assign these images:ICOS
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Ki67")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "LAG3")
    Name to assign these images:LAG3
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "PD1")
    Name to assign these images:PD1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "PDL1")
    Name to assign these images:PDL1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Nd_vimentin")
    Name to assign these images:vimentin
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Pr_aSMA")
    Name to assign these images:aSMA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CASP3")
    Name to assign these images:CASP3
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "pSTAT1")
    Name to assign these images:pSTAT1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Dy_panCK")
    Name to assign these images:panCK
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Eu_CD31")
    Name to assign these images:CD31
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "FAP1")
    Name to assign these images:FAP1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "TCF1")
    Name to assign these images:TCF1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "TIM3")
    Name to assign these images:TIM3
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "nuclear_mask")
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    Name to assign these objects:nuclei
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ExpandOrShrinkObjects:[module_num:5|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notes:['']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
    Select the input objects:nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifyTertiaryObjects:[module_num:6|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
    Select the larger identified objects:nuclei
    Select the smaller identified objects:ShrunkenNuclei
    Name the tertiary objects to be identified:nuclei_border_original
    Shrink smaller object prior to subtraction?:No

MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:nuclei_border_original
    Select objects to measure:nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:8|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
    Select the objects to filter:nuclei_border_original
    Name the output objects:nuclei_border_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:Yes
    Maximum value:7

MaskObjects:[module_num:9|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
    Select objects to be masked:nuclei_border_original
    Name the masked objects:larger_nuclei_border
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nuclei_border_filtered
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MaskObjects:[module_num:10|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
    Select objects to be masked:nuclei
    Name the masked objects:nuclei_filtered
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nuclei_border_filtered
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:larger_nuclei_border
    Name the output image:larger_nuclei_border_mask
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:12|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notes:['']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
    Select the input objects:nuclei_filtered
    Name the output image:nuclei_filtered_mask
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:13|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
    Select the image to measure:nuclei_filtered_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:14|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notes:['']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:larger_nuclei_border_mask_draft_one
    Image or measurement?:Image
    Select the first image:larger_nuclei_border_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:larger_nuclei_border_mask
    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_nuclei_filtered_mask

ImageMath:[module_num:15|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notes:['']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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:larger_nuclei_border_draft_two
    Image or measurement?:Image
    Select the first image:larger_nuclei_border_mask_draft_one
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:larger_nuclei_border_mask
    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_nuclei_filtered_mask

MeasureImageIntensity:[module_num:16|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
    Select the image to measure:larger_nuclei_border_draft_two
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:17|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:larger_nuclei_border_draft_three
    Image or measurement?:Image
    Select the first image:larger_nuclei_border_draft_two
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_larger_nuclei_border_draft_two

MaskImage:[module_num:18|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
    Select the input image:larger_nuclei_border_mask_draft_one
    Name the output image:larger_nuclei_border_mask_to_sum
    Use objects or an image as a mask?:Image
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    Select image for mask:larger_nuclei_border_draft_three
    Invert the mask?:Yes

ImageMath:[module_num:19|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notes:['']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:nuclei_border_mask_draft
    Image or measurement?:Image
    Select the first image:nuclei_filtered_mask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:larger_nuclei_border_mask_to_sum
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:20|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
    Select the input image:nuclei_border_mask_draft
    Name the output image:nuclei_border_mask_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:21|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notes:['']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
    Select the input image:nuclei_border_mask_rescaled
    Name the output object:nuclei_border
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

Threshold:[module_num:22|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notes:['']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
    Select the input image:preprocessed_CD8a
    Name the output image:CD8a_domain
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:23|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
    Select objects to be masked:nuclei_border
    Name the masked objects:CD8a_nuclei_border
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:CD8a_domain
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:24|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notes:['']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
    Select objects to be masked:nuclei
    Name the masked objects:CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:25|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notes:['']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
    Select the input objects:CD8a_nuclei
    Name the objects to be identified:CD8a_cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:preprocessed_CD8a
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:26|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
    Select objects to be masked:nuclei_border
    Name the masked objects:non_CD8a_nuclei_border
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:27|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
    Select objects to be masked:nuclei
    Name the masked objects:non_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_CD8a_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:28|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
    Select objects to be masked:CD8a_cells
    Name the masked objects:CD8a_cells_filtered
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_CD8a_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:29|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
    Select the input objects:CD8a_cells_filtered
    Name the output image:CD8a_cells_filtered
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:30|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
    Select the image to measure:CD8a_cells_filtered
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:31|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:CD8a_cells_normalized
    Image or measurement?:Image
    Select the first image:CD8a_cells_filtered
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_CD8a_cells_filtered

RescaleIntensity:[module_num:32|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
    Select the input image:CD8a_cells_normalized
    Name the output image:CD8a_cells_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:33|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
    Select the input image:CD8a_cells_rescaled
    Name the output object:CD8a_cells_corrected
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:34|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
    Select objects to be masked:CD8a_cells_corrected
    Name the masked objects:CD8a_cells_final
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:35|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
    Select the input objects:CD8a_cells_final
    Name the output image:raw_CD8a_mask
    Select the color format:uint16
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
SaveImages:[module_num:36|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:raw_CD8a_mask
    Select method for constructing file names:Single name
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    Enter single file name:CD8a-only_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:37|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:preprocessed_CD8a
    Name the output image:CD8a_overlay_on_CD8a
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:CD8a_cells_final

SaveImages:[module_num:38|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CD8a_overlay_on_CD8a
    Select method for constructing file names:Single name
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    Enter single file name:CD8a_cells_on_CD8a
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Threshold:[module_num:39|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notes:['']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
    Select the input image:preprocessed_CD4
    Name the output image:CD4_domain
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:40|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
    Select objects to be masked:nuclei_border
    Name the masked objects:CD4_nuclei_border
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:CD4_domain
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:41|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notes:['']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
    Select objects to be masked:nuclei
    Name the masked objects:CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:42|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
    Select the input objects:CD4_nuclei
    Name the objects to be identified:CD4_cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:preprocessed_CD4
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:43|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
    Select objects to be masked:nuclei_border
    Name the masked objects:non_CD4_nuclei_border
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:44|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
    Select objects to be masked:nuclei
    Name the masked objects:non_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_CD4_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:45|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
    Select objects to be masked:CD4_cells
    Name the masked objects:CD4_cells_filtered
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_CD4_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:46|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
    Select the input objects:CD4_cells_filtered
    Name the output image:CD4_cells_filtered
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:47|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
    Select the image to measure:CD4_cells_filtered
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:48|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:CD4_cells_normalized
    Image or measurement?:Image
    Select the first image:CD4_cells_filtered
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_CD4_cells_filtered

RescaleIntensity:[module_num:49|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
    Select the input image:CD4_cells_normalized
    Name the output image:CD4_cells_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:50|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
    Select the input image:CD4_cells_rescaled
    Name the output object:CD4_cells_corrected
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:51|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
    Select objects to be masked:CD4_cells_corrected
    Name the masked objects:CD4_cells_final
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:52|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
    Select the input objects:CD4_cells_final
    Name the output image:raw_CD4_mask
    Select the color format:uint16
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
SaveImages:[module_num:53|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:raw_CD4_mask
    Select method for constructing file names:Single name
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    Enter single file name:CD4-only_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:54|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:preprocessed_CD4
    Name the output image:CD4_overlay_on_CD4
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:CD4_cells_final

SaveImages:[module_num:55|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CD4_overlay_on_CD4
    Select method for constructing file names:Single name
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    Enter single file name:CD4_cells_on_CD4
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Threshold:[module_num:56|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notes:['']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
    Select the input image:preprocessed_CD3
    Name the output image:CD3_domain
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:57|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
    Select objects to be masked:nuclei_border
    Name the masked objects:CD3_nuclei_border
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:CD3_domain
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:58|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notes:['']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
    Select objects to be masked:nuclei
    Name the masked objects:CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:59|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
    Select the input objects:CD3_nuclei
    Name the objects to be identified:CD3_cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:preprocessed_CD3
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:60|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
    Select objects to be masked:nuclei_border
    Name the masked objects:non_CD3_nuclei_border
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:61|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
    Select objects to be masked:nuclei
    Name the masked objects:non_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_CD3_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:62|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
    Select objects to be masked:CD3_cells
    Name the masked objects:CD3_cells_filtered
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_CD3_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:63|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
    Select the input objects:CD3_cells_filtered
    Name the output image:CD3_cells_filtered
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:64|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
    Select the image to measure:CD3_cells_filtered
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:65|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:CD3_cells_normalized
    Image or measurement?:Image
    Select the first image:CD3_cells_filtered
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_CD3_cells_filtered

RescaleIntensity:[module_num:66|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
    Select the input image:CD3_cells_normalized
    Name the output image:CD3_cells_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:67|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
    Select the input image:CD3_cells_rescaled
    Name the output object:CD3_cells_corrected
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:68|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
    Select objects to be masked:CD3_cells_corrected
    Name the masked objects:CD3_cells_final
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:69|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
    Select the input objects:CD3_cells_final
    Name the output image:raw_CD3_mask
    Select the color format:uint16
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
SaveImages:[module_num:70|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:raw_CD3_mask
    Select method for constructing file names:Single name
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    Enter single file name:CD3-only_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:71|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:preprocessed_CD3
    Name the output image:CD3_overlay_on_CD3
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:CD3_cells_final

SaveImages:[module_num:72|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CD3_overlay_on_CD3
    Select method for constructing file names:Single name
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    Enter single file name:CD3_cells_on_CD3
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Threshold:[module_num:73|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
    Select the input image:preprocessed_CD45
    Name the output image:CD45_domain
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:74|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
    Select objects to be masked:nuclei_border
    Name the masked objects:CD45_nuclei_border
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:CD45_domain
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:75|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notes:['']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
    Select objects to be masked:nuclei
    Name the masked objects:CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:76|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
    Select the input objects:CD45_nuclei
    Name the objects to be identified:CD45_cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:preprocessed_CD45
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:77|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
    Select objects to be masked:nuclei_border
    Name the masked objects:non_CD45_nuclei_border
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:78|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
    Select objects to be masked:nuclei
    Name the masked objects:non_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_CD45_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:79|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
    Select objects to be masked:CD45_cells
    Name the masked objects:CD45_cells_filtered
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_CD45_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:80|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
    Select the input objects:CD45_cells_filtered
    Name the output image:CD45_cells_filtered
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:81|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
    Select the image to measure:CD45_cells_filtered
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:82|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:CD45_cells_normalized
    Image or measurement?:Image
    Select the first image:CD45_cells_filtered
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_CD45_cells_filtered

RescaleIntensity:[module_num:83|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
    Select the input image:CD45_cells_normalized
    Name the output image:CD45_cells_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:84|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
    Select the input image:CD45_cells_rescaled
    Name the output object:CD45_cells_corrected
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:85|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
    Select objects to be masked:CD45_cells_corrected
    Name the masked objects:CD45_cells_final
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:86|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
    Select the input objects:CD45_cells_final
    Name the output image:raw_CD45_mask
    Select the color format:uint16
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
SaveImages:[module_num:87|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:raw_CD45_mask
    Select method for constructing file names:Single name
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    Enter single file name:CD45-only_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:88|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:preprocessed_CD45
    Name the output image:CD45_overlay_on_CD45
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:CD45_cells_final

SaveImages:[module_num:89|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CD45_overlay_on_CD45
    Select method for constructing file names:Single name
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    Enter single file name:CD45_cells_on_CD45
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Threshold:[module_num:90|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notes:['']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
    Select the input image:preprocessed_panCK
    Name the output image:panCK_domain
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:91|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
    Select objects to be masked:nuclei_border
    Name the masked objects:panCK_nuclei_border
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:panCK_domain
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:92|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notes:['']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
    Select objects to be masked:nuclei
    Name the masked objects:panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:93|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notes:['']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
    Select the input objects:panCK_nuclei
    Name the objects to be identified:panCK_cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:preprocessed_panCK
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:94|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
    Select objects to be masked:nuclei_border
    Name the masked objects:non_panCK_nuclei_border
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:95|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
    Select objects to be masked:nuclei
    Name the masked objects:non_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_panCK_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:96|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
    Select objects to be masked:panCK_cells
    Name the masked objects:panCK_cells_filtered
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_panCK_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:97|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
    Select the input objects:panCK_cells_filtered
    Name the output image:panCK_cells_filtered
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:98|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
    Select the image to measure:panCK_cells_filtered
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:99|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:panCK_cells_normalized
    Image or measurement?:Image
    Select the first image:panCK_cells_filtered
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_panCK_cells_filtered

RescaleIntensity:[module_num:100|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
    Select the input image:panCK_cells_normalized
    Name the output image:panCK_cells_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:101|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
    Select the input image:panCK_cells_rescaled
    Name the output object:panCK_cells_corrected
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:102|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
    Select objects to be masked:panCK_cells_corrected
    Name the masked objects:panCK_cells_final
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:103|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
    Select the input objects:panCK_cells_final
    Name the output image:raw_panCK_mask
    Select the color format:uint16
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
SaveImages:[module_num:104|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:raw_panCK_mask
    Select method for constructing file names:Single name
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    Enter single file name:panCK-only_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:105|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:preprocessed_panCK
    Name the output image:panCK_overlay_on_panCK
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:panCK_cells_final

SaveImages:[module_num:106|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:panCK_overlay_on_panCK
    Select method for constructing file names:Single name
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    Enter single file name:panCK_cells_on_panCK
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Threshold:[module_num:107|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notes:['']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
    Select the input image:preprocessed_CD31
    Name the output image:CD31_domain
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:108|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notes:['']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
    Select objects to be masked:nuclei_border
    Name the masked objects:CD31_nuclei_border
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:CD31_domain
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:109|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notes:['']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
    Select objects to be masked:nuclei
    Name the masked objects:CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:110|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notes:['']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
    Select the input objects:CD31_nuclei
    Name the objects to be identified:CD31_cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:preprocessed_CD31
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:111|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
    Select objects to be masked:nuclei_border
    Name the masked objects:non_CD31_nuclei_border
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:112|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
    Select objects to be masked:nuclei
    Name the masked objects:non_CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_CD31_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:113|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
    Select objects to be masked:CD31_cells
    Name the masked objects:CD31_cells_filtered
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_CD31_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:114|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
    Select the input objects:CD31_cells_filtered
    Name the output image:CD31_cells_filtered
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:115|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
    Select the image to measure:CD31_cells_filtered
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:116|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:CD31_cells_normalized
    Image or measurement?:Image
    Select the first image:CD31_cells_filtered
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_CD31_cells_filtered

RescaleIntensity:[module_num:117|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
    Select the input image:CD31_cells_normalized
    Name the output image:CD31_cells_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:118|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
    Select the input image:CD31_cells_rescaled
    Name the output object:CD31_cells_corrected
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:119|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
    Select objects to be masked:CD31_cells_corrected
    Name the masked objects:CD31_cells_final
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:120|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
    Select the input objects:CD31_cells_final
    Name the output image:raw_CD31_mask
    Select the color format:uint16
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
SaveImages:[module_num:121|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:raw_CD31_mask
    Select method for constructing file names:Single name
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    Enter single file name:CD31-only_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:122|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:preprocessed_CD31
    Name the output image:CD31_overlay_on_CD31
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:CD31_cells_final

SaveImages:[module_num:123|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CD31_overlay_on_CD31
    Select method for constructing file names:Single name
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    Enter single file name:CD31_cells_on_CD31
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Threshold:[module_num:124|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notes:['']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
    Select the input image:preprocessed_aSMA
    Name the output image:aSMA_domain
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MaskObjects:[module_num:125|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
    Select objects to be masked:nuclei_border
    Name the masked objects:aSMA_nuclei_border
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:aSMA_domain
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:126|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notes:['']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
    Select objects to be masked:nuclei
    Name the masked objects:aSMA_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:127|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notes:['']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
    Select the input objects:aSMA_nuclei
    Name the objects to be identified:aSMA_cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:preprocessed_aSMA
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MaskObjects:[module_num:128|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
    Select objects to be masked:nuclei_border
    Name the masked objects:non_aSMA_nuclei_border
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:129|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
    Select objects to be masked:nuclei
    Name the masked objects:non_aSMA_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_aSMA_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:130|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
    Select objects to be masked:aSMA_cells
    Name the masked objects:aSMA_cells_filtered
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_aSMA_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:131|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
    Select the input objects:aSMA_cells_filtered
    Name the output image:aSMA_cells_filtered
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:132|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
    Select the image to measure:aSMA_cells_filtered
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:133|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:aSMA_cells_normalized
    Image or measurement?:Image
    Select the first image:aSMA_cells_filtered
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_aSMA_cells_filtered

RescaleIntensity:[module_num:134|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
    Select the input image:aSMA_cells_normalized
    Name the output image:aSMA_cells_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:135|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
    Select the input image:aSMA_cells_rescaled
    Name the output object:aSMA_cells_corrected
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:136|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
    Select objects to be masked:aSMA_cells_corrected
    Name the masked objects:aSMA_cells_final
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:137|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
    Select the input objects:aSMA_cells_final
    Name the output image:raw_aSMA_mask
    Select the color format:uint16
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
SaveImages:[module_num:138|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:raw_aSMA_mask
    Select method for constructing file names:Single name
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    Enter single file name:aSMA-only_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:139|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:preprocessed_aSMA
    Name the output image:aSMA_overlay_on_aSMA
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:aSMA_cells_final

SaveImages:[module_num:140|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:aSMA_overlay_on_aSMA
    Select method for constructing file names:Single name
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    Enter single file name:aSMA_cells_on_aSMA
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Threshold:[module_num:141|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
    Select the input image:preprocessed_vimentin
    Name the output image:vimentin_domain
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:142|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
    Select objects to be masked:nuclei_border
    Name the masked objects:vimentin_nuclei_border
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:vimentin_domain
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:143|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notes:['']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
    Select objects to be masked:nuclei
    Name the masked objects:vimentin_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:144|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
    Select the input objects:vimentin_nuclei
    Name the objects to be identified:vimentin_cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:preprocessed_vimentin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:145|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
    Select objects to be masked:nuclei_border
    Name the masked objects:non_vimentin_nuclei_border
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:146|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
    Select objects to be masked:nuclei
    Name the masked objects:non_vimentin_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_vimentin_nuclei_border
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:147|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
    Select objects to be masked:vimentin_cells
    Name the masked objects:vimentin_cells_filtered
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:non_vimentin_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:148|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
    Select the input objects:vimentin_cells_filtered
    Name the output image:vimentin_cells_filtered
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:149|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
    Select the image to measure:vimentin_cells_filtered
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:150|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:vimentin_cells_normalized
    Image or measurement?:Image
    Select the first image:vimentin_cells_filtered
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_vimentin_cells_filtered

RescaleIntensity:[module_num:151|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
    Select the input image:vimentin_cells_normalized
    Name the output image:vimentin_cells_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:152|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
    Select the input image:vimentin_cells_rescaled
    Name the output object:vimentin_cells_corrected
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:153|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
    Select objects to be masked:vimentin_cells_corrected
    Name the masked objects:vimentin_cells_final
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:154|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
    Select the input objects:vimentin_cells_final
    Name the output image:raw_vimentin_mask
    Select the color format:uint16
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
SaveImages:[module_num:155|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:raw_vimentin_mask
    Select method for constructing file names:Single name
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    Enter single file name:vimentin-only_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:156|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:preprocessed_Vimentin
    Name the output image:vimentin_overlay_on_vimentin
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:vimentin_cells_final

SaveImages:[module_num:157|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:vimentin_overlay_on_vimentin
    Select method for constructing file names:Single name
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    Enter single file name:vimentin_cells_on_vimentin
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:158|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notes:['']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
    Select the input image:preprocessed_aSMA
    Name the primary objects to be identified:aSMA_plus
    Typical diameter of objects, in pixel units (Min,Max):5,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ConvertObjectsToImage:[module_num:159|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
    Select the input objects:aSMA_plus
    Name the output image:raw_aSMA_plus_draft
    Select the color format:uint16
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
MeasureObjectSizeShape:[module_num:160|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
    Select objects to measure:aSMA_plus
    Calculate the Zernike features?:No

FilterObjects:[module_num:161|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notes:['']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
    Select the objects to filter:aSMA_plus
    Name the output objects:aSMA_plus_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:Yes
    Maximum value:1000

ConvertObjectsToImage:[module_num:162|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
    Select the input objects:aSMA_plus_filtered
    Name the output image:raw_aSMA_plus
    Select the color format:uint16
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
SaveImages:[module_num:163|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:raw_aSMA_plus
    Select method for constructing file names:Single name
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    Enter single file name:aSMA_nonuclei-only_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:164|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:preprocessed_aSMA
    Name the output image:aSMA_extra_overlay_on_aSMA
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:aSMA_plus_filtered

SaveImages:[module_num:165|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:aSMA_extra_overlay_on_aSMA
    Select method for constructing file names:Single name
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    Enter single file name:aSMA_extra_overlay_on_aSMA
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskObjects:[module_num:166|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
    Select objects to be masked:CD4_nuclei
    Name the masked objects:CD4_nuclei_masked_by_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:167|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
    Select objects to be masked:CD4_cells_final
    Name the masked objects:temp_CD4_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei_masked_by_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:168|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
    Select objects to be masked:CD8a_cells_final
    Name the masked objects:CD8a_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD4_cells_masked_by_CD8a_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:169|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
    Select objects to be masked:CD3_nuclei
    Name the masked objects:CD3_nuclei_masked_by_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:170|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
    Select objects to be masked:CD3_cells_final
    Name the masked objects:temp_CD3_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei_masked_by_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:171|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
    Select objects to be masked:CD8a_cells_masked_by_CD4_cells
    Name the masked objects:CD8a_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD3_cells_masked_by_CD8a_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:172|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
    Select objects to be masked:CD45_nuclei
    Name the masked objects:CD45_nuclei_masked_by_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:173|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
    Select objects to be masked:CD45_cells_final
    Name the masked objects:temp_CD45_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei_masked_by_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:174|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
    Select objects to be masked:CD8a_cells_masked_by_CD3_cells
    Name the masked objects:CD8a_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD45_cells_masked_by_CD8a_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:175|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
    Select objects to be masked:panCK_nuclei
    Name the masked objects:panCK_nuclei_masked_by_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:176|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
    Select objects to be masked:panCK_cells_final
    Name the masked objects:temp_panCK_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei_masked_by_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:177|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
    Select objects to be masked:CD8a_cells_masked_by_CD45_cells
    Name the masked objects:CD8a_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_panCK_cells_masked_by_CD8a_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:178|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
    Select objects to be masked:CD31_nuclei
    Name the masked objects:CD31_nuclei_masked_by_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:179|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
    Select objects to be masked:CD31_cells_final
    Name the masked objects:temp_CD31_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei_masked_by_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:180|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
    Select objects to be masked:CD8a_cells_masked_by_panCK_cells
    Name the masked objects:CD8a_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD31_cells_masked_by_CD8a_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:181|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
    Select objects to be masked:aSMA_nuclei
    Name the masked objects:aSMA_nuclei_masked_by_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:182|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
    Select objects to be masked:aSMA_cells_final
    Name the masked objects:temp_aSMA_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei_masked_by_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:183|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
    Select objects to be masked:CD8a_cells_masked_by_CD31_cells
    Name the masked objects:CD8a_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_aSMA_cells_masked_by_CD8a_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:184|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
    Select objects to be masked:vimentin_nuclei
    Name the masked objects:vimentin_nuclei_masked_by_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:185|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
    Select objects to be masked:vimentin_cells_final
    Name the masked objects:temp_vimentin_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei_masked_by_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:186|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
    Select objects to be masked:CD8a_cells_masked_by_aSMA_cells
    Name the masked objects:CD8a_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_vimentin_cells_masked_by_CD8a_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:187|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
    Select objects to be masked:CD8a_cells_masked_by_vimentin_cells
    Name the masked objects:CD8a_masked_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:188|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
    Select the input objects:CD8a_masked_cells
    Name the output image:CD8a_whole_mask
    Select the color format:uint16
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
ConvertImageToObjects:[module_num:189|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
    Select the input image:CD8a_whole_mask
    Name the output object:CD8a_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:190|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
    Select objects to be masked:CD8a_objects
    Name the masked objects:corrected_CD8a_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:191|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
    Select objects to be masked:CD8a_nuclei
    Name the masked objects:CD8a_nuclei_masked_by_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:192|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
    Select objects to be masked:CD8a_cells_final
    Name the masked objects:temp_CD8a_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei_masked_by_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:193|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
    Select objects to be masked:CD4_cells_final
    Name the masked objects:CD4_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD8a_cells_masked_by_CD4_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:194|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
    Select objects to be masked:CD3_nuclei
    Name the masked objects:CD3_nuclei_masked_by_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:195|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
    Select objects to be masked:CD3_cells_final
    Name the masked objects:temp_CD3_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei_masked_by_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:196|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
    Select objects to be masked:CD4_cells_masked_by_CD8a_cells
    Name the masked objects:CD4_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD3_cells_masked_by_CD4_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:197|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
    Select objects to be masked:CD45_nuclei
    Name the masked objects:CD45_nuclei_masked_by_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:198|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
    Select objects to be masked:CD45_cells_final
    Name the masked objects:temp_CD45_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei_masked_by_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:199|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
    Select objects to be masked:CD4_cells_masked_by_CD3_cells
    Name the masked objects:CD4_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD45_cells_masked_by_CD4_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:200|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
    Select objects to be masked:panCK_nuclei
    Name the masked objects:panCK_nuclei_masked_by_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:201|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
    Select objects to be masked:panCK_cells_final
    Name the masked objects:temp_panCK_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei_masked_by_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:202|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
    Select objects to be masked:CD4_cells_masked_by_CD45_cells
    Name the masked objects:CD4_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_panCK_cells_masked_by_CD4_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:203|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
    Select objects to be masked:CD31_nuclei
    Name the masked objects:CD31_nuclei_masked_by_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:204|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
    Select objects to be masked:CD31_cells_final
    Name the masked objects:temp_CD31_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei_masked_by_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:205|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
    Select objects to be masked:CD4_cells_masked_by_panCK_cells
    Name the masked objects:CD4_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD31_cells_masked_by_CD4_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:206|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
    Select objects to be masked:aSMA_nuclei
    Name the masked objects:aSMA_nuclei_masked_by_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:207|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
    Select objects to be masked:aSMA_cells_final
    Name the masked objects:temp_aSMA_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei_masked_by_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:208|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
    Select objects to be masked:CD4_cells_masked_by_CD31_cells
    Name the masked objects:CD4_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_aSMA_cells_masked_by_CD4_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:209|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
    Select objects to be masked:vimentin_nuclei
    Name the masked objects:vimentin_nuclei_masked_by_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:210|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
    Select objects to be masked:vimentin_cells_final
    Name the masked objects:temp_vimentin_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei_masked_by_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:211|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
    Select objects to be masked:CD4_cells_masked_by_aSMA_cells
    Name the masked objects:CD4_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_vimentin_cells_masked_by_CD4_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:212|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
    Select objects to be masked:CD4_cells_masked_by_vimentin_cells
    Name the masked objects:CD4_masked_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:213|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
    Select the input objects:CD4_masked_cells
    Name the output image:CD4_whole_mask
    Select the color format:uint16
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
ConvertImageToObjects:[module_num:214|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
    Select the input image:CD4_whole_mask
    Name the output object:CD4_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:215|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
    Select objects to be masked:CD4_objects
    Name the masked objects:corrected_CD4_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:216|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
    Select objects to be masked:CD8a_nuclei
    Name the masked objects:CD8a_nuclei_masked_by_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:217|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
    Select objects to be masked:CD8a_cells_final
    Name the masked objects:temp_CD8a_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei_masked_by_CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:218|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
    Select objects to be masked:CD3_cells_final
    Name the masked objects:CD3_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD8a_cells_masked_by_CD3_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:219|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
    Select objects to be masked:CD4_nuclei
    Name the masked objects:CD4_nuclei_masked_by_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:220|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
    Select objects to be masked:CD4_cells_final
    Name the masked objects:temp_CD4_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei_masked_by_CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:221|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
    Select objects to be masked:CD3_cells_masked_by_CD8a_cells
    Name the masked objects:CD3_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD4_cells_masked_by_CD3_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:222|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
    Select objects to be masked:CD45_nuclei
    Name the masked objects:CD45_nuclei_masked_by_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:223|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
    Select objects to be masked:CD45_cells_final
    Name the masked objects:temp_CD45_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei_masked_by_CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:224|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
    Select objects to be masked:CD3_cells_masked_by_CD4_cells
    Name the masked objects:CD3_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD45_cells_masked_by_CD3_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:225|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
    Select objects to be masked:panCK_nuclei
    Name the masked objects:panCK_nuclei_masked_by_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:226|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
    Select objects to be masked:panCK_cells_final
    Name the masked objects:temp_panCK_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei_masked_by_CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:227|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
    Select objects to be masked:CD3_cells_masked_by_CD45_cells
    Name the masked objects:CD3_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_panCK_cells_masked_by_CD3_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:228|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
    Select objects to be masked:CD31_nuclei
    Name the masked objects:CD31_nuclei_masked_by_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:229|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
    Select objects to be masked:CD31_cells_final
    Name the masked objects:temp_CD31_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei_masked_by_CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:230|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
    Select objects to be masked:CD3_cells_masked_by_panCK_cells
    Name the masked objects:CD3_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD31_cells_masked_by_CD3_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:231|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
    Select objects to be masked:aSMA_nuclei
    Name the masked objects:aSMA_nuclei_masked_by_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:232|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
    Select objects to be masked:aSMA_cells_final
    Name the masked objects:temp_aSMA_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei_masked_by_CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:233|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
    Select objects to be masked:CD3_cells_masked_by_CD31_cells
    Name the masked objects:CD3_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_aSMA_cells_masked_by_CD3_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:234|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
    Select objects to be masked:vimentin_nuclei
    Name the masked objects:vimentin_nuclei_masked_by_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:235|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
    Select objects to be masked:vimentin_cells_final
    Name the masked objects:temp_vimentin_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei_masked_by_CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:236|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
    Select objects to be masked:CD3_cells_masked_by_aSMA_cells
    Name the masked objects:CD3_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_vimentin_cells_masked_by_CD3_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:237|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
    Select objects to be masked:CD3_cells_masked_by_vimentin_cells
    Name the masked objects:CD3_masked_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:238|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
    Select the input objects:CD3_masked_cells
    Name the output image:CD3_whole_mask
    Select the color format:uint16
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
ConvertImageToObjects:[module_num:239|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
    Select the input image:CD3_whole_mask
    Name the output object:CD3_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:240|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
    Select objects to be masked:CD3_objects
    Name the masked objects:corrected_CD3_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:241|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
    Select objects to be masked:CD8a_nuclei
    Name the masked objects:CD8a_nuclei_masked_by_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:242|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
    Select objects to be masked:CD8a_cells_final
    Name the masked objects:temp_CD8a_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei_masked_by_CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:243|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
    Select objects to be masked:CD45_cells_final
    Name the masked objects:CD45_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD8a_cells_masked_by_CD45_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:244|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
    Select objects to be masked:CD4_nuclei
    Name the masked objects:CD4_nuclei_masked_by_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:245|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
    Select objects to be masked:CD4_cells_final
    Name the masked objects:temp_CD4_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei_masked_by_CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:246|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
    Select objects to be masked:CD45_cells_masked_by_CD8a_cells
    Name the masked objects:CD45_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD4_cells_masked_by_CD45_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:247|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
    Select objects to be masked:CD3_nuclei
    Name the masked objects:CD3_nuclei_masked_by_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:248|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
    Select objects to be masked:CD3_cells_final
    Name the masked objects:temp_CD3_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei_masked_by_CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:249|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
    Select objects to be masked:CD45_cells_masked_by_CD4_cells
    Name the masked objects:CD45_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD3_cells_masked_by_CD45_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:250|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
    Select objects to be masked:panCK_nuclei
    Name the masked objects:panCK_nuclei_masked_by_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:251|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
    Select objects to be masked:panCK_cells_final
    Name the masked objects:temp_panCK_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei_masked_by_CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:252|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
    Select objects to be masked:CD45_cells_masked_by_CD3_cells
    Name the masked objects:CD45_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_panCK_cells_masked_by_CD45_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:253|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
    Select objects to be masked:CD31_nuclei
    Name the masked objects:CD31_nuclei_masked_by_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:254|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
    Select objects to be masked:CD31_cells_final
    Name the masked objects:temp_CD31_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei_masked_by_CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:255|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
    Select objects to be masked:CD45_cells_masked_by_panCK_cells
    Name the masked objects:CD45_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD31_cells_masked_by_CD45_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:256|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
    Select objects to be masked:aSMA_nuclei
    Name the masked objects:aSMA_nuclei_masked_by_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:257|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
    Select objects to be masked:aSMA_cells_final
    Name the masked objects:temp_aSMA_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei_masked_by_CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:258|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
    Select objects to be masked:CD45_cells_masked_by_CD31_cells
    Name the masked objects:CD45_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_aSMA_cells_masked_by_CD45_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:259|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
    Select objects to be masked:vimentin_nuclei
    Name the masked objects:vimentin_nuclei_masked_by_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:260|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
    Select objects to be masked:vimentin_cells_final
    Name the masked objects:temp_vimentin_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei_masked_by_CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:261|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
    Select objects to be masked:CD45_cells_masked_by_aSMA_cells
    Name the masked objects:CD45_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_vimentin_cells_masked_by_CD45_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:262|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
    Select objects to be masked:CD45_cells_masked_by_vimentin_cells
    Name the masked objects:CD45_masked_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:263|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
    Select the input objects:CD45_masked_cells
    Name the output image:CD45_whole_mask
    Select the color format:uint16
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
ConvertImageToObjects:[module_num:264|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
    Select the input image:CD45_whole_mask
    Name the output object:CD45_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:265|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
    Select objects to be masked:CD45_objects
    Name the masked objects:corrected_CD45_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:266|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
    Select objects to be masked:CD8a_nuclei
    Name the masked objects:CD8a_nuclei_masked_by_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:267|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
    Select objects to be masked:CD8a_cells_final
    Name the masked objects:temp_CD8a_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei_masked_by_panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:268|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
    Select objects to be masked:panCK_cells_final
    Name the masked objects:panCK_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD8a_cells_masked_by_panCK_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:269|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
    Select objects to be masked:CD4_nuclei
    Name the masked objects:CD4_nuclei_masked_by_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:270|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
    Select objects to be masked:CD4_cells_final
    Name the masked objects:temp_CD4_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei_masked_by_panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:271|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
    Select objects to be masked:panCK_cells_masked_by_CD8a_cells
    Name the masked objects:panCK_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD4_cells_masked_by_panCK_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:272|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
    Select objects to be masked:CD3_nuclei
    Name the masked objects:CD3_nuclei_masked_by_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:273|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
    Select objects to be masked:CD3_cells_final
    Name the masked objects:temp_CD3_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei_masked_by_panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:274|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
    Select objects to be masked:panCK_cells_masked_by_CD4_cells
    Name the masked objects:panCK_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD3_cells_masked_by_panCK_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:275|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
    Select objects to be masked:CD45_nuclei
    Name the masked objects:CD45_nuclei_masked_by_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:276|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
    Select objects to be masked:CD45_cells_final
    Name the masked objects:temp_CD45_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei_masked_by_panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:277|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
    Select objects to be masked:panCK_cells_masked_by_CD3_cells
    Name the masked objects:panCK_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD45_cells_masked_by_panCK_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:278|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
    Select objects to be masked:CD31_nuclei
    Name the masked objects:CD31_nuclei_masked_by_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:279|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
    Select objects to be masked:CD31_cells_final
    Name the masked objects:temp_CD31_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei_masked_by_panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:280|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
    Select objects to be masked:panCK_cells_masked_by_CD45_cells
    Name the masked objects:panCK_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD31_cells_masked_by_panCK_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:281|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
    Select objects to be masked:aSMA_nuclei
    Name the masked objects:aSMA_nuclei_masked_by_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:282|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
    Select objects to be masked:aSMA_cells_final
    Name the masked objects:temp_aSMA_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei_masked_by_panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:283|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
    Select objects to be masked:panCK_cells_masked_by_CD31_cells
    Name the masked objects:panCK_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_aSMA_cells_masked_by_panCK_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:284|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
    Select objects to be masked:vimentin_nuclei
    Name the masked objects:vimentin_nuclei_masked_by_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:285|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
    Select objects to be masked:vimentin_cells_final
    Name the masked objects:temp_vimentin_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei_masked_by_panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:286|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
    Select objects to be masked:panCK_cells_masked_by_aSMA_cells
    Name the masked objects:panCK_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_vimentin_cells_masked_by_panCK_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:287|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
    Select objects to be masked:panCK_cells_masked_by_vimentin_cells
    Name the masked objects:panCK_masked_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:288|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
    Select the input objects:panCK_masked_cells
    Name the output image:panCK_whole_mask
    Select the color format:uint16
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
ConvertImageToObjects:[module_num:289|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
    Select the input image:panCK_whole_mask
    Name the output object:panCK_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:290|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
    Select objects to be masked:panCK_objects
    Name the masked objects:corrected_panCK_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:291|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
    Select objects to be masked:CD8a_nuclei
    Name the masked objects:CD8a_nuclei_masked_by_CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:292|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
    Select objects to be masked:CD8a_cells_final
    Name the masked objects:temp_CD8a_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei_masked_by_CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:293|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
    Select objects to be masked:CD31_cells_final
    Name the masked objects:CD31_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD8a_cells_masked_by_CD31_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:294|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
    Select objects to be masked:CD4_nuclei
    Name the masked objects:CD4_nuclei_masked_by_CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:295|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
    Select objects to be masked:CD4_cells_final
    Name the masked objects:temp_CD4_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei_masked_by_CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:296|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
    Select objects to be masked:CD31_cells_masked_by_CD8a_cells
    Name the masked objects:CD31_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD4_cells_masked_by_CD31_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:297|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
    Select objects to be masked:CD3_nuclei
    Name the masked objects:CD3_nuclei_masked_by_CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:298|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
    Select objects to be masked:CD3_cells_final
    Name the masked objects:temp_CD3_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei_masked_by_CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:299|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
    Select objects to be masked:CD31_cells_masked_by_CD4_cells
    Name the masked objects:CD31_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD3_cells_masked_by_CD31_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:300|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
    Select objects to be masked:CD45_nuclei
    Name the masked objects:CD45_nuclei_masked_by_CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:301|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
    Select objects to be masked:CD45_cells_final
    Name the masked objects:temp_CD45_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei_masked_by_CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:302|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
    Select objects to be masked:CD31_cells_masked_by_CD3_cells
    Name the masked objects:CD31_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD45_cells_masked_by_CD31_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:303|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
    Select objects to be masked:panCK_nuclei
    Name the masked objects:panCK_nuclei_masked_by_CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:304|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
    Select objects to be masked:panCK_cells_final
    Name the masked objects:temp_panCK_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei_masked_by_CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:305|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
    Select objects to be masked:CD31_cells_masked_by_CD45_cells
    Name the masked objects:CD31_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_panCK_cells_masked_by_CD31_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:306|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
    Select objects to be masked:aSMA_nuclei
    Name the masked objects:aSMA_nuclei_masked_by_CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:307|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
    Select objects to be masked:aSMA_cells_final
    Name the masked objects:temp_aSMA_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei_masked_by_CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:308|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
    Select objects to be masked:CD31_cells_masked_by_panCK_cells
    Name the masked objects:CD31_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_aSMA_cells_masked_by_CD31_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:309|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
    Select objects to be masked:vimentin_nuclei
    Name the masked objects:vimentin_nuclei_masked_by_CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:310|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
    Select objects to be masked:vimentin_cells_final
    Name the masked objects:temp_vimentin_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei_masked_by_CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:311|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
    Select objects to be masked:CD31_cells_masked_by_aSMA_cells
    Name the masked objects:CD31_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_vimentin_cells_masked_by_CD31_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:312|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
    Select objects to be masked:CD31_cells_masked_by_vimentin_cells
    Name the masked objects:CD31_masked_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:313|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
    Select the input objects:CD31_masked_cells
    Name the output image:CD31_whole_mask
    Select the color format:uint16
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
ConvertImageToObjects:[module_num:314|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
    Select the input image:CD31_whole_mask
    Name the output object:CD31_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:315|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
    Select objects to be masked:CD31_objects
    Name the masked objects:corrected_CD31_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:316|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
    Select objects to be masked:CD8a_nuclei
    Name the masked objects:CD8a_nuclei_masked_by_aSMA_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:317|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
    Select objects to be masked:CD8a_cells_final
    Name the masked objects:temp_CD8a_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei_masked_by_aSMA_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:318|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
    Select objects to be masked:aSMA_cells_final
    Name the masked objects:aSMA_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD8a_cells_masked_by_aSMA_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:319|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
    Select objects to be masked:CD4_nuclei
    Name the masked objects:CD4_nuclei_masked_by_aSMA_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:320|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
    Select objects to be masked:CD4_cells_final
    Name the masked objects:temp_CD4_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei_masked_by_aSMA_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:321|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
    Select objects to be masked:aSMA_cells_masked_by_CD8a_cells
    Name the masked objects:aSMA_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD4_cells_masked_by_aSMA_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:322|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
    Select objects to be masked:CD3_nuclei
    Name the masked objects:CD3_nuclei_masked_by_aSMA_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:323|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
    Select objects to be masked:CD3_cells_final
    Name the masked objects:temp_CD3_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei_masked_by_aSMA_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:324|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
    Select objects to be masked:aSMA_cells_masked_by_CD4_cells
    Name the masked objects:aSMA_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD3_cells_masked_by_aSMA_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:325|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
    Select objects to be masked:CD45_nuclei
    Name the masked objects:CD45_nuclei_masked_by_aSMA_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:326|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
    Select objects to be masked:CD45_cells_final
    Name the masked objects:temp_CD45_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei_masked_by_aSMA_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:327|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
    Select objects to be masked:aSMA_cells_masked_by_CD3_cells
    Name the masked objects:aSMA_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD45_cells_masked_by_aSMA_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:328|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
    Select objects to be masked:panCK_nuclei
    Name the masked objects:panCK_nuclei_masked_by_aSMA_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:329|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
    Select objects to be masked:panCK_cells_final
    Name the masked objects:temp_panCK_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei_masked_by_aSMA_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:330|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
    Select objects to be masked:aSMA_cells_masked_by_CD45_cells
    Name the masked objects:aSMA_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_panCK_cells_masked_by_aSMA_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:331|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
    Select objects to be masked:CD31_nuclei
    Name the masked objects:CD31_nuclei_masked_by_aSMA_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:332|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
    Select objects to be masked:CD31_cells_final
    Name the masked objects:temp_CD31_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei_masked_by_aSMA_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:333|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
    Select objects to be masked:aSMA_cells_masked_by_panCK_cells
    Name the masked objects:aSMA_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD31_cells_masked_by_aSMA_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:334|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
    Select objects to be masked:vimentin_nuclei
    Name the masked objects:vimentin_nuclei_masked_by_aSMA_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:335|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
    Select objects to be masked:vimentin_cells_final
    Name the masked objects:temp_vimentin_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei_masked_by_aSMA_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:336|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
    Select objects to be masked:aSMA_cells_masked_by_CD31_cells
    Name the masked objects:aSMA_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_vimentin_cells_masked_by_aSMA_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:337|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
    Select objects to be masked:aSMA_cells_masked_by_vimentin_cells
    Name the masked objects:aSMA_masked_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:338|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
    Select the input objects:aSMA_masked_cells
    Name the output image:aSMA_whole_mask
    Select the color format:uint16
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
ConvertImageToObjects:[module_num:339|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
    Select the input image:aSMA_whole_mask
    Name the output object:aSMA_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:340|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
    Select objects to be masked:aSMA_objects
    Name the masked objects:corrected_aSMA_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:341|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
    Select objects to be masked:CD8a_nuclei
    Name the masked objects:CD8a_nuclei_masked_by_vimentin_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:342|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
    Select objects to be masked:CD8a_cells_final
    Name the masked objects:temp_CD8a_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei_masked_by_vimentin_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:343|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
    Select objects to be masked:vimentin_cells_final
    Name the masked objects:vimentin_cells_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD8a_cells_masked_by_vimentin_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:344|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
    Select objects to be masked:CD4_nuclei
    Name the masked objects:CD4_nuclei_masked_by_vimentin_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:345|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
    Select objects to be masked:CD4_cells_final
    Name the masked objects:temp_CD4_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei_masked_by_vimentin_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:346|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
    Select objects to be masked:vimentin_cells_masked_by_CD8a_cells
    Name the masked objects:vimentin_cells_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD4_cells_masked_by_vimentin_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:347|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
    Select objects to be masked:CD3_nuclei
    Name the masked objects:CD3_nuclei_masked_by_vimentin_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:348|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
    Select objects to be masked:CD3_cells_final
    Name the masked objects:temp_CD3_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei_masked_by_vimentin_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:349|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
    Select objects to be masked:vimentin_cells_masked_by_CD4_cells
    Name the masked objects:vimentin_cells_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD3_cells_masked_by_vimentin_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:350|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
    Select objects to be masked:CD45_nuclei
    Name the masked objects:CD45_nuclei_masked_by_vimentin_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:351|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
    Select objects to be masked:CD45_cells_final
    Name the masked objects:temp_CD45_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei_masked_by_vimentin_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:352|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
    Select objects to be masked:vimentin_cells_masked_by_CD3_cells
    Name the masked objects:vimentin_cells_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD45_cells_masked_by_vimentin_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:353|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
    Select objects to be masked:panCK_nuclei
    Name the masked objects:panCK_nuclei_masked_by_vimentin_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:354|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
    Select objects to be masked:panCK_cells_final
    Name the masked objects:temp_panCK_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei_masked_by_vimentin_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:355|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
    Select objects to be masked:vimentin_cells_masked_by_CD45_cells
    Name the masked objects:vimentin_cells_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_panCK_cells_masked_by_vimentin_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:356|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
    Select objects to be masked:CD31_nuclei
    Name the masked objects:CD31_nuclei_masked_by_vimentin_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:357|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
    Select objects to be masked:CD31_cells_final
    Name the masked objects:temp_CD31_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei_masked_by_vimentin_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:358|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
    Select objects to be masked:vimentin_cells_masked_by_panCK_cells
    Name the masked objects:vimentin_cells_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_CD31_cells_masked_by_vimentin_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:359|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
    Select objects to be masked:aSMA_nuclei
    Name the masked objects:aSMA_nuclei_masked_by_vimentin_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:360|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
    Select objects to be masked:aSMA_cells_final
    Name the masked objects:temp_aSMA_cells_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei_masked_by_vimentin_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:361|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
    Select objects to be masked:vimentin_cells_masked_by_CD31_cells
    Name the masked objects:vimentin_cells_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:temp_aSMA_cells_masked_by_vimentin_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:362|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
    Select objects to be masked:vimentin_cells_masked_by_aSMA_cells
    Name the masked objects:vimentin_masked_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:363|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
    Select the input objects:vimentin_masked_cells
    Name the output image:vimentin_whole_mask
    Select the color format:uint16
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
ConvertImageToObjects:[module_num:364|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
    Select the input image:vimentin_whole_mask
    Name the output object:vimentin_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:365|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
    Select objects to be masked:vimentin_objects
    Name the masked objects:corrected_vimentin_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:366|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
    Select objects to be masked:corrected_CD8a_objects
    Name the masked objects:CD8a_cells_overlapping_CD4_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:367|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
    Select objects to be masked:corrected_CD8a_objects
    Name the masked objects:CD8a_cells_overlapping_CD4_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:368|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
    Select objects to be masked:CD8a_cells_overlapping_CD4_cells_whole
    Name the masked objects:CD8a_cells_overlapping_CD4_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_CD4_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:369|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
    Select objects to be masked:corrected_CD8a_objects
    Name the masked objects:CD8a_cells_with_CD4_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_CD4_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:370|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
    Select objects to be masked:CD8a_cells_with_CD4_overlap_removed
    Name the masked objects:CD8a_cells_overlapping_CD3_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:371|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
    Select objects to be masked:CD8a_cells_with_CD4_overlap_removed
    Name the masked objects:CD8a_cells_overlapping_CD3_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:372|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
    Select objects to be masked:CD8a_cells_overlapping_CD3_cells_whole
    Name the masked objects:CD8a_cells_overlapping_CD3_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_CD3_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:373|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
    Select objects to be masked:CD8a_cells_with_CD4_overlap_removed
    Name the masked objects:CD8a_cells_with_CD3_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_CD3_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:374|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
    Select objects to be masked:CD8a_cells_with_CD3_overlap_removed
    Name the masked objects:CD8a_cells_overlapping_CD45_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:375|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
    Select objects to be masked:CD8a_cells_with_CD3_overlap_removed
    Name the masked objects:CD8a_cells_overlapping_CD45_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:376|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
    Select objects to be masked:CD8a_cells_overlapping_CD45_cells_whole
    Name the masked objects:CD8a_cells_overlapping_CD45_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_CD45_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:377|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
    Select objects to be masked:CD8a_cells_with_CD3_overlap_removed
    Name the masked objects:CD8a_cells_with_CD45_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_CD45_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:378|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
    Select objects to be masked:CD8a_cells_with_CD45_overlap_removed
    Name the masked objects:CD8a_cells_overlapping_panCK_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:379|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
    Select objects to be masked:CD8a_cells_with_CD45_overlap_removed
    Name the masked objects:CD8a_cells_overlapping_panCK_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:380|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
    Select objects to be masked:CD8a_cells_overlapping_panCK_cells_whole
    Name the masked objects:CD8a_cells_overlapping_panCK_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_panCK_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:381|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
    Select objects to be masked:CD8a_cells_with_CD45_overlap_removed
    Name the masked objects:CD8a_cells_with_panCK_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_panCK_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:382|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
    Select objects to be masked:CD8a_cells_with_panCK_overlap_removed
    Name the masked objects:CD8a_cells_overlapping_CD31_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:383|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
    Select objects to be masked:CD8a_cells_with_panCK_overlap_removed
    Name the masked objects:CD8a_cells_overlapping_CD31_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:384|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
    Select objects to be masked:CD8a_cells_overlapping_CD31_cells_whole
    Name the masked objects:CD8a_cells_overlapping_CD31_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_CD31_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:385|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
    Select objects to be masked:CD8a_cells_with_panCK_overlap_removed
    Name the masked objects:CD8a_cells_with_CD31_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_CD31_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:386|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
    Select objects to be masked:CD8a_cells_with_CD31_overlap_removed
    Name the masked objects:CD8a_cells_overlapping_aSMA_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:387|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
    Select objects to be masked:CD8a_cells_with_CD31_overlap_removed
    Name the masked objects:CD8a_cells_overlapping_aSMA_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:388|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
    Select objects to be masked:CD8a_cells_overlapping_aSMA_cells_whole
    Name the masked objects:CD8a_cells_overlapping_aSMA_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_aSMA_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:389|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
    Select objects to be masked:CD8a_cells_with_CD31_overlap_removed
    Name the masked objects:CD8a_cells_with_aSMA_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_aSMA_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:390|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
    Select objects to be masked:CD8a_cells_with_aSMA_overlap_removed
    Name the masked objects:CD8a_cells_overlapping_vimentin_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:391|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
    Select objects to be masked:CD8a_cells_with_aSMA_overlap_removed
    Name the masked objects:CD8a_cells_overlapping_vimentin_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:392|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
    Select objects to be masked:CD8a_cells_overlapping_vimentin_cells_whole
    Name the masked objects:CD8a_cells_overlapping_vimentin_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_vimentin_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:393|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
    Select objects to be masked:CD8a_cells_with_aSMA_overlap_removed
    Name the masked objects:CD8a_cells_with_vimentin_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_overlapping_vimentin_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:394|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
    Select the input objects:CD8a_cells_with_vimentin_overlap_removed
    Name the output image:CD8a_mask
    Select the color format:uint16
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
SaveImages:[module_num:395|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CD8a_mask
    Select method for constructing file names:Single name
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    Enter single file name:CD8a_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskObjects:[module_num:396|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
    Select objects to be masked:corrected_CD4_objects
    Name the masked objects:CD4_cells_overlapping_CD8a_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:397|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
    Select objects to be masked:corrected_CD4_objects
    Name the masked objects:CD4_cells_overlapping_CD8a_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:398|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
    Select objects to be masked:CD4_cells_overlapping_CD8a_cells_whole
    Name the masked objects:CD4_cells_overlapping_CD8a_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_CD8a_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:399|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
    Select objects to be masked:corrected_CD4_objects
    Name the masked objects:CD4_cells_with_CD8a_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_CD8a_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:400|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
    Select objects to be masked:CD4_cells_with_CD8a_overlap_removed
    Name the masked objects:CD4_cells_overlapping_CD3_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:401|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
    Select objects to be masked:CD4_cells_with_CD8a_overlap_removed
    Name the masked objects:CD4_cells_overlapping_CD3_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:402|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
    Select objects to be masked:CD4_cells_overlapping_CD3_cells_whole
    Name the masked objects:CD4_cells_overlapping_CD3_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_CD3_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:403|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
    Select objects to be masked:CD4_cells_with_CD8a_overlap_removed
    Name the masked objects:CD4_cells_with_CD3_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_CD3_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:404|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
    Select objects to be masked:CD4_cells_with_CD3_overlap_removed
    Name the masked objects:CD4_cells_overlapping_CD45_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:405|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
    Select objects to be masked:CD4_cells_with_CD3_overlap_removed
    Name the masked objects:CD4_cells_overlapping_CD45_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:406|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
    Select objects to be masked:CD4_cells_overlapping_CD45_cells_whole
    Name the masked objects:CD4_cells_overlapping_CD45_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_CD45_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:407|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
    Select objects to be masked:CD4_cells_with_CD3_overlap_removed
    Name the masked objects:CD4_cells_with_CD45_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_CD45_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:408|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
    Select objects to be masked:CD4_cells_with_CD45_overlap_removed
    Name the masked objects:CD4_cells_overlapping_panCK_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:409|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
    Select objects to be masked:CD4_cells_with_CD45_overlap_removed
    Name the masked objects:CD4_cells_overlapping_panCK_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:410|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
    Select objects to be masked:CD4_cells_overlapping_panCK_cells_whole
    Name the masked objects:CD4_cells_overlapping_panCK_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_panCK_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:411|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
    Select objects to be masked:CD4_cells_with_CD45_overlap_removed
    Name the masked objects:CD4_cells_with_panCK_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_panCK_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:412|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
    Select objects to be masked:CD4_cells_with_panCK_overlap_removed
    Name the masked objects:CD4_cells_overlapping_CD31_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:413|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
    Select objects to be masked:CD4_cells_with_panCK_overlap_removed
    Name the masked objects:CD4_cells_overlapping_CD31_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:414|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
    Select objects to be masked:CD4_cells_overlapping_CD31_cells_whole
    Name the masked objects:CD4_cells_overlapping_CD31_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_CD31_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:415|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
    Select objects to be masked:CD4_cells_with_panCK_overlap_removed
    Name the masked objects:CD4_cells_with_CD31_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_CD31_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:416|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
    Select objects to be masked:CD4_cells_with_CD31_overlap_removed
    Name the masked objects:CD4_cells_overlapping_aSMA_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:417|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
    Select objects to be masked:CD4_cells_with_CD31_overlap_removed
    Name the masked objects:CD4_cells_overlapping_aSMA_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:418|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
    Select objects to be masked:CD4_cells_overlapping_aSMA_cells_whole
    Name the masked objects:CD4_cells_overlapping_aSMA_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_aSMA_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:419|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
    Select objects to be masked:CD4_cells_with_CD31_overlap_removed
    Name the masked objects:CD4_cells_with_aSMA_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_aSMA_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:420|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
    Select objects to be masked:CD4_cells_with_aSMA_overlap_removed
    Name the masked objects:CD4_cells_overlapping_vimentin_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:421|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
    Select objects to be masked:CD4_cells_with_aSMA_overlap_removed
    Name the masked objects:CD4_cells_overlapping_vimentin_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:422|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
    Select objects to be masked:CD4_cells_overlapping_vimentin_cells_whole
    Name the masked objects:CD4_cells_overlapping_vimentin_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_vimentin_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:423|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
    Select objects to be masked:CD4_cells_with_aSMA_overlap_removed
    Name the masked objects:CD4_cells_with_vimentin_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_overlapping_vimentin_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:424|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
    Select objects to be masked:CD4_cells_with_vimentin_overlap_removed
    Name the masked objects:CD4_cells_with_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:425|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
    Select objects to be masked:CD4_cells_with_vimentin_overlap_removed
    Name the masked objects:CD4_cells_without_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_with_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:426|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
    Select the input objects:CD4_cells_without_CD8a_nuclei
    Name the output image:CD4_mask
    Select the color format:uint16
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
SaveImages:[module_num:427|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CD4_mask
    Select method for constructing file names:Single name
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    Enter single file name:CD4_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskObjects:[module_num:428|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
    Select objects to be masked:corrected_CD3_objects
    Name the masked objects:CD3_cells_overlapping_CD8a_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:429|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
    Select objects to be masked:corrected_CD3_objects
    Name the masked objects:CD3_cells_overlapping_CD8a_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:430|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
    Select objects to be masked:CD3_cells_overlapping_CD8a_cells_whole
    Name the masked objects:CD3_cells_overlapping_CD8a_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_CD8a_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:431|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
    Select objects to be masked:corrected_CD3_objects
    Name the masked objects:CD3_cells_with_CD8a_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_CD8a_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:432|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
    Select objects to be masked:CD3_cells_with_CD8a_overlap_removed
    Name the masked objects:CD3_cells_overlapping_CD4_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:433|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
    Select objects to be masked:CD3_cells_with_CD8a_overlap_removed
    Name the masked objects:CD3_cells_overlapping_CD4_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:434|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
    Select objects to be masked:CD3_cells_overlapping_CD4_cells_whole
    Name the masked objects:CD3_cells_overlapping_CD4_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_CD4_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:435|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
    Select objects to be masked:CD3_cells_with_CD8a_overlap_removed
    Name the masked objects:CD3_cells_with_CD4_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_CD4_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:436|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
    Select objects to be masked:CD3_cells_with_CD4_overlap_removed
    Name the masked objects:CD3_cells_overlapping_CD45_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:437|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
    Select objects to be masked:CD3_cells_with_CD4_overlap_removed
    Name the masked objects:CD3_cells_overlapping_CD45_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:438|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
    Select objects to be masked:CD3_cells_overlapping_CD45_cells_whole
    Name the masked objects:CD3_cells_overlapping_CD45_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_CD45_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:439|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
    Select objects to be masked:CD3_cells_with_CD4_overlap_removed
    Name the masked objects:CD3_cells_with_CD45_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_CD45_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:440|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
    Select objects to be masked:CD3_cells_with_CD45_overlap_removed
    Name the masked objects:CD3_cells_overlapping_panCK_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:441|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
    Select objects to be masked:CD3_cells_with_CD45_overlap_removed
    Name the masked objects:CD3_cells_overlapping_panCK_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:442|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
    Select objects to be masked:CD3_cells_overlapping_panCK_cells_whole
    Name the masked objects:CD3_cells_overlapping_panCK_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_panCK_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:443|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
    Select objects to be masked:CD3_cells_with_CD45_overlap_removed
    Name the masked objects:CD3_cells_with_panCK_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_panCK_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:444|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
    Select objects to be masked:CD3_cells_with_panCK_overlap_removed
    Name the masked objects:CD3_cells_overlapping_CD31_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:445|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
    Select objects to be masked:CD3_cells_with_panCK_overlap_removed
    Name the masked objects:CD3_cells_overlapping_CD31_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:446|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
    Select objects to be masked:CD3_cells_overlapping_CD31_cells_whole
    Name the masked objects:CD3_cells_overlapping_CD31_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_CD31_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:447|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
    Select objects to be masked:CD3_cells_with_panCK_overlap_removed
    Name the masked objects:CD3_cells_with_CD31_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_CD31_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:448|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
    Select objects to be masked:CD3_cells_with_CD31_overlap_removed
    Name the masked objects:CD3_cells_overlapping_aSMA_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:449|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
    Select objects to be masked:CD3_cells_with_CD31_overlap_removed
    Name the masked objects:CD3_cells_overlapping_aSMA_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:450|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
    Select objects to be masked:CD3_cells_overlapping_aSMA_cells_whole
    Name the masked objects:CD3_cells_overlapping_aSMA_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_aSMA_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:451|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
    Select objects to be masked:CD3_cells_with_CD31_overlap_removed
    Name the masked objects:CD3_cells_with_aSMA_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_aSMA_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:452|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
    Select objects to be masked:CD3_cells_with_aSMA_overlap_removed
    Name the masked objects:CD3_cells_overlapping_vimentin_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:453|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
    Select objects to be masked:CD3_cells_with_aSMA_overlap_removed
    Name the masked objects:CD3_cells_overlapping_vimentin_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:454|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
    Select objects to be masked:CD3_cells_overlapping_vimentin_cells_whole
    Name the masked objects:CD3_cells_overlapping_vimentin_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_vimentin_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:455|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
    Select objects to be masked:CD3_cells_with_aSMA_overlap_removed
    Name the masked objects:CD3_cells_with_vimentin_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_overlapping_vimentin_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:456|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
    Select objects to be masked:CD3_cells_with_vimentin_overlap_removed
    Name the masked objects:CD3_cells_with_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:457|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
    Select objects to be masked:CD3_cells_with_vimentin_overlap_removed
    Name the masked objects:CD3_cells_without_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_with_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:458|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
    Select objects to be masked:CD3_cells_without_CD8a_nuclei
    Name the masked objects:CD3_cells_with_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:459|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
    Select objects to be masked:CD3_cells_without_CD8a_nuclei
    Name the masked objects:CD3_cells_without_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_with_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:460|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
    Select the input objects:CD3_cells_without_CD4_nuclei
    Name the output image:CD3_mask
    Select the color format:uint16
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
SaveImages:[module_num:461|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CD3_mask
    Select method for constructing file names:Single name
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    Enter single file name:CD3_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskObjects:[module_num:462|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
    Select objects to be masked:corrected_CD45_objects
    Name the masked objects:CD45_cells_overlapping_CD8a_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:463|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
    Select objects to be masked:corrected_CD45_objects
    Name the masked objects:CD45_cells_overlapping_CD8a_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:464|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
    Select objects to be masked:CD45_cells_overlapping_CD8a_cells_whole
    Name the masked objects:CD45_cells_overlapping_CD8a_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_CD8a_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:465|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
    Select objects to be masked:corrected_CD45_objects
    Name the masked objects:CD45_cells_with_CD8a_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_CD8a_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:466|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
    Select objects to be masked:CD45_cells_with_CD8a_overlap_removed
    Name the masked objects:CD45_cells_overlapping_CD4_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:467|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
    Select objects to be masked:CD45_cells_with_CD8a_overlap_removed
    Name the masked objects:CD45_cells_overlapping_CD4_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:468|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
    Select objects to be masked:CD45_cells_overlapping_CD4_cells_whole
    Name the masked objects:CD45_cells_overlapping_CD4_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_CD4_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:469|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
    Select objects to be masked:CD45_cells_with_CD8a_overlap_removed
    Name the masked objects:CD45_cells_with_CD4_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_CD4_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:470|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
    Select objects to be masked:CD45_cells_with_CD4_overlap_removed
    Name the masked objects:CD45_cells_overlapping_CD3_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:471|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
    Select objects to be masked:CD45_cells_with_CD4_overlap_removed
    Name the masked objects:CD45_cells_overlapping_CD3_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:472|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
    Select objects to be masked:CD45_cells_overlapping_CD3_cells_whole
    Name the masked objects:CD45_cells_overlapping_CD3_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_CD3_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:473|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
    Select objects to be masked:CD45_cells_with_CD4_overlap_removed
    Name the masked objects:CD45_cells_with_CD3_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_CD3_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:474|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
    Select objects to be masked:CD45_cells_with_CD3_overlap_removed
    Name the masked objects:CD45_cells_overlapping_panCK_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:475|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
    Select objects to be masked:CD45_cells_with_CD3_overlap_removed
    Name the masked objects:CD45_cells_overlapping_panCK_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:476|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
    Select objects to be masked:CD45_cells_overlapping_panCK_cells_whole
    Name the masked objects:CD45_cells_overlapping_panCK_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_panCK_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:477|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
    Select objects to be masked:CD45_cells_with_CD3_overlap_removed
    Name the masked objects:CD45_cells_with_panCK_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_panCK_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:478|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
    Select objects to be masked:CD45_cells_with_panCK_overlap_removed
    Name the masked objects:CD45_cells_overlapping_CD31_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:479|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
    Select objects to be masked:CD45_cells_with_panCK_overlap_removed
    Name the masked objects:CD45_cells_overlapping_CD31_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:480|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
    Select objects to be masked:CD45_cells_overlapping_CD31_cells_whole
    Name the masked objects:CD45_cells_overlapping_CD31_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_CD31_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:481|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
    Select objects to be masked:CD45_cells_with_panCK_overlap_removed
    Name the masked objects:CD45_cells_with_CD31_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_CD31_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:482|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
    Select objects to be masked:CD45_cells_with_CD31_overlap_removed
    Name the masked objects:CD45_cells_overlapping_aSMA_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:483|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
    Select objects to be masked:CD45_cells_with_CD31_overlap_removed
    Name the masked objects:CD45_cells_overlapping_aSMA_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:484|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
    Select objects to be masked:CD45_cells_overlapping_aSMA_cells_whole
    Name the masked objects:CD45_cells_overlapping_aSMA_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_aSMA_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:485|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
    Select objects to be masked:CD45_cells_with_CD31_overlap_removed
    Name the masked objects:CD45_cells_with_aSMA_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_aSMA_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:486|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
    Select objects to be masked:CD45_cells_with_aSMA_overlap_removed
    Name the masked objects:CD45_cells_overlapping_vimentin_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:487|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
    Select objects to be masked:CD45_cells_with_aSMA_overlap_removed
    Name the masked objects:CD45_cells_overlapping_vimentin_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:488|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
    Select objects to be masked:CD45_cells_overlapping_vimentin_cells_whole
    Name the masked objects:CD45_cells_overlapping_vimentin_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_vimentin_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:489|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
    Select objects to be masked:CD45_cells_with_aSMA_overlap_removed
    Name the masked objects:CD45_cells_with_vimentin_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_overlapping_vimentin_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:490|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
    Select objects to be masked:CD45_cells_with_vimentin_overlap_removed
    Name the masked objects:CD45_cells_with_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:491|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
    Select objects to be masked:CD45_cells_with_vimentin_overlap_removed
    Name the masked objects:CD45_cells_without_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_with_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:492|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
    Select objects to be masked:CD45_cells_without_CD8a_nuclei
    Name the masked objects:CD45_cells_with_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:493|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
    Select objects to be masked:CD45_cells_without_CD8a_nuclei
    Name the masked objects:CD45_cells_without_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_with_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:494|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
    Select objects to be masked:CD45_cells_without_CD4_nuclei
    Name the masked objects:CD45_cells_with_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:495|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
    Select objects to be masked:CD45_cells_without_CD4_nuclei
    Name the masked objects:CD45_cells_without_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_with_CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:496|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
    Select the input objects:CD45_cells_without_CD3_nuclei
    Name the output image:CD45_mask
    Select the color format:uint16
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
SaveImages:[module_num:497|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CD45_mask
    Select method for constructing file names:Single name
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    Enter single file name:CD45_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskObjects:[module_num:498|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
    Select objects to be masked:corrected_panCK_objects
    Name the masked objects:panCK_cells_overlapping_CD4_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:499|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
    Select objects to be masked:corrected_panCK_objects
    Name the masked objects:panCK_cells_overlapping_CD4_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:500|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
    Select objects to be masked:panCK_cells_overlapping_CD4_cells_whole
    Name the masked objects:panCK_cells_overlapping_CD4_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_CD4_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:501|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
    Select objects to be masked:corrected_panCK_objects
    Name the masked objects:panCK_cells_with_CD4_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_CD4_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:502|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
    Select objects to be masked:panCK_cells_with_CD4_overlap_removed
    Name the masked objects:panCK_cells_overlapping_CD3_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:503|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
    Select objects to be masked:panCK_cells_with_CD4_overlap_removed
    Name the masked objects:panCK_cells_overlapping_CD3_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:504|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
    Select objects to be masked:panCK_cells_overlapping_CD3_cells_whole
    Name the masked objects:panCK_cells_overlapping_CD3_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_CD3_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:505|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
    Select objects to be masked:panCK_cells_with_CD4_overlap_removed
    Name the masked objects:panCK_cells_with_CD3_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_CD3_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:506|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
    Select objects to be masked:panCK_cells_with_CD3_overlap_removed
    Name the masked objects:panCK_cells_overlapping_CD45_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:507|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
    Select objects to be masked:panCK_cells_with_CD3_overlap_removed
    Name the masked objects:panCK_cells_overlapping_CD45_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:508|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
    Select objects to be masked:panCK_cells_overlapping_CD45_cells_whole
    Name the masked objects:panCK_cells_overlapping_CD45_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_CD45_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:509|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
    Select objects to be masked:panCK_cells_with_CD3_overlap_removed
    Name the masked objects:panCK_cells_with_CD45_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_CD45_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:510|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
    Select objects to be masked:panCK_cells_with_CD45_overlap_removed
    Name the masked objects:panCK_cells_overlapping_CD8a_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:511|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
    Select objects to be masked:panCK_cells_with_CD45_overlap_removed
    Name the masked objects:panCK_cells_overlapping_CD8a_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:512|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
    Select objects to be masked:panCK_cells_overlapping_CD8a_cells_whole
    Name the masked objects:panCK_cells_overlapping_CD8a_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_CD8a_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:513|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
    Select objects to be masked:panCK_cells_with_CD45_overlap_removed
    Name the masked objects:panCK_cells_with_CD8a_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_CD8a_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:514|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
    Select objects to be masked:panCK_cells_with_CD8a_overlap_removed
    Name the masked objects:panCK_cells_overlapping_CD31_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:515|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
    Select objects to be masked:panCK_cells_with_CD8a_overlap_removed
    Name the masked objects:panCK_cells_overlapping_CD31_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:516|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
    Select objects to be masked:panCK_cells_overlapping_CD31_cells_whole
    Name the masked objects:panCK_cells_overlapping_CD31_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_CD31_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:517|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
    Select objects to be masked:panCK_cells_with_CD8a_overlap_removed
    Name the masked objects:panCK_cells_with_CD31_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_CD31_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:518|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
    Select objects to be masked:panCK_cells_with_CD31_overlap_removed
    Name the masked objects:panCK_cells_overlapping_aSMA_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:519|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
    Select objects to be masked:panCK_cells_with_CD31_overlap_removed
    Name the masked objects:panCK_cells_overlapping_aSMA_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:520|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
    Select objects to be masked:panCK_cells_overlapping_aSMA_cells_whole
    Name the masked objects:panCK_cells_overlapping_aSMA_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_aSMA_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:521|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
    Select objects to be masked:panCK_cells_with_CD31_overlap_removed
    Name the masked objects:panCK_cells_with_aSMA_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_aSMA_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:522|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
    Select objects to be masked:panCK_cells_with_aSMA_overlap_removed
    Name the masked objects:panCK_cells_overlapping_vimentin_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:523|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
    Select objects to be masked:panCK_cells_with_aSMA_overlap_removed
    Name the masked objects:panCK_cells_overlapping_vimentin_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:524|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
    Select objects to be masked:panCK_cells_overlapping_vimentin_cells_whole
    Name the masked objects:panCK_cells_overlapping_vimentin_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_vimentin_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:525|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
    Select objects to be masked:panCK_cells_with_aSMA_overlap_removed
    Name the masked objects:panCK_cells_with_vimentin_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_overlapping_vimentin_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:526|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
    Select objects to be masked:panCK_cells_with_vimentin_overlap_removed
    Name the masked objects:panCK_cells_with_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:527|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
    Select objects to be masked:panCK_cells_with_vimentin_overlap_removed
    Name the masked objects:panCK_cells_without_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_with_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:528|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
    Select objects to be masked:panCK_cells_without_CD8a_nuclei
    Name the masked objects:panCK_cells_with_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:529|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
    Select objects to be masked:panCK_cells_without_CD8a_nuclei
    Name the masked objects:panCK_cells_without_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_with_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:530|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
    Select objects to be masked:panCK_cells_without_CD4_nuclei
    Name the masked objects:panCK_cells_with_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:531|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
    Select objects to be masked:panCK_cells_without_CD4_nuclei
    Name the masked objects:panCK_cells_without_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_with_CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:532|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
    Select objects to be masked:panCK_cells_without_CD3_nuclei
    Name the masked objects:panCK_cells_with_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:533|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
    Select objects to be masked:panCK_cells_without_CD3_nuclei
    Name the masked objects:panCK_cells_without_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_with_CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:534|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
    Select the input objects:panCK_cells_without_CD45_nuclei
    Name the output image:panCK_mask
    Select the color format:uint16
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
SaveImages:[module_num:535|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:panCK_mask
    Select method for constructing file names:Single name
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    Enter single file name:panCK_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskObjects:[module_num:536|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
    Select objects to be masked:corrected_CD31_objects
    Name the masked objects:CD31_cells_overlapping_CD8a_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:537|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
    Select objects to be masked:corrected_CD31_objects
    Name the masked objects:CD31_cells_overlapping_CD8a_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:538|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
    Select objects to be masked:CD31_cells_overlapping_CD8a_cells_whole
    Name the masked objects:CD31_cells_overlapping_CD8a_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_CD8a_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:539|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
    Select objects to be masked:corrected_CD31_objects
    Name the masked objects:CD31_cells_with_CD8a_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_CD8a_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:540|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
    Select objects to be masked:CD31_cells_with_CD8a_overlap_removed
    Name the masked objects:CD31_cells_overlapping_CD3_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:541|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
    Select objects to be masked:CD31_cells_with_CD8a_overlap_removed
    Name the masked objects:CD31_cells_overlapping_CD3_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:542|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
    Select objects to be masked:CD31_cells_overlapping_CD3_cells_whole
    Name the masked objects:CD31_cells_overlapping_CD3_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_CD3_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:543|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
    Select objects to be masked:CD31_cells_with_CD8a_overlap_removed
    Name the masked objects:CD31_cells_with_CD3_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_CD3_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:544|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
    Select objects to be masked:CD31_cells_with_CD3_overlap_removed
    Name the masked objects:CD31_cells_overlapping_CD45_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:545|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
    Select objects to be masked:CD31_cells_with_CD3_overlap_removed
    Name the masked objects:CD31_cells_overlapping_CD45_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:546|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
    Select objects to be masked:CD31_cells_overlapping_CD45_cells_whole
    Name the masked objects:CD31_cells_overlapping_CD45_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_CD45_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:547|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
    Select objects to be masked:CD31_cells_with_CD3_overlap_removed
    Name the masked objects:CD31_cells_with_CD45_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_CD45_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:548|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
    Select objects to be masked:CD31_cells_with_CD45_overlap_removed
    Name the masked objects:CD31_cells_overlapping_panCK_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:549|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
    Select objects to be masked:CD31_cells_with_CD45_overlap_removed
    Name the masked objects:CD31_cells_overlapping_panCK_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:550|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
    Select objects to be masked:CD31_cells_overlapping_panCK_cells_whole
    Name the masked objects:CD31_cells_overlapping_panCK_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_panCK_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:551|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
    Select objects to be masked:CD31_cells_with_CD45_overlap_removed
    Name the masked objects:CD31_cells_with_panCK_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_panCK_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:552|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
    Select objects to be masked:CD31_cells_with_panCK_overlap_removed
    Name the masked objects:CD31_cells_overlapping_CD4_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:553|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
    Select objects to be masked:CD31_cells_with_panCK_overlap_removed
    Name the masked objects:CD31_cells_overlapping_CD4_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:554|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
    Select objects to be masked:CD31_cells_overlapping_CD4_cells_whole
    Name the masked objects:CD31_cells_overlapping_CD4_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_CD4_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:555|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
    Select objects to be masked:CD31_cells_with_panCK_overlap_removed
    Name the masked objects:CD31_cells_with_CD4_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_CD4_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:556|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
    Select objects to be masked:CD31_cells_with_CD4_overlap_removed
    Name the masked objects:CD31_cells_overlapping_aSMA_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:557|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
    Select objects to be masked:CD31_cells_with_CD4_overlap_removed
    Name the masked objects:CD31_cells_overlapping_aSMA_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:558|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
    Select objects to be masked:CD31_cells_overlapping_aSMA_cells_whole
    Name the masked objects:CD31_cells_overlapping_aSMA_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_aSMA_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:559|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
    Select objects to be masked:CD31_cells_with_CD4_overlap_removed
    Name the masked objects:CD31_cells_with_aSMA_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_aSMA_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:560|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
    Select objects to be masked:CD31_cells_with_aSMA_overlap_removed
    Name the masked objects:CD31_cells_overlapping_vimentin_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:561|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
    Select objects to be masked:CD31_cells_with_aSMA_overlap_removed
    Name the masked objects:CD31_cells_overlapping_vimentin_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:562|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
    Select objects to be masked:CD31_cells_overlapping_vimentin_cells_whole
    Name the masked objects:CD31_cells_overlapping_vimentin_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_vimentin_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:563|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
    Select objects to be masked:CD31_cells_with_aSMA_overlap_removed
    Name the masked objects:CD31_cells_with_vimentin_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_overlapping_vimentin_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:564|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
    Select objects to be masked:CD31_cells_with_vimentin_overlap_removed
    Name the masked objects:CD31_cells_with_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:565|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
    Select objects to be masked:CD31_cells_with_vimentin_overlap_removed
    Name the masked objects:CD31_cells_without_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_with_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:566|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
    Select objects to be masked:CD31_cells_without_CD8a_nuclei
    Name the masked objects:CD31_cells_with_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:567|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
    Select objects to be masked:CD31_cells_without_CD8a_nuclei
    Name the masked objects:CD31_cells_without_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_with_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:568|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
    Select objects to be masked:CD31_cells_without_CD4_nuclei
    Name the masked objects:CD31_cells_with_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:569|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
    Select objects to be masked:CD31_cells_without_CD4_nuclei
    Name the masked objects:CD31_cells_without_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_with_CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:570|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
    Select objects to be masked:CD31_cells_without_CD3_nuclei
    Name the masked objects:CD31_cells_with_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:571|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
    Select objects to be masked:CD31_cells_without_CD3_nuclei
    Name the masked objects:CD31_cells_without_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_with_CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:572|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
    Select objects to be masked:CD31_cells_without_CD45_nuclei
    Name the masked objects:CD31_cells_with_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:573|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
    Select objects to be masked:CD31_cells_without_CD45_nuclei
    Name the masked objects:CD31_cells_without_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_with_panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:574|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
    Select the input objects:CD31_cells_without_panCK_nuclei
    Name the output image:CD31_mask
    Select the color format:uint16
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
SaveImages:[module_num:575|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CD31_mask
    Select method for constructing file names:Single name
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    Enter single file name:CD31_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskObjects:[module_num:576|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
    Select objects to be masked:corrected_aSMA_objects
    Name the masked objects:aSMA_cells_overlapping_CD8a_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:577|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
    Select objects to be masked:corrected_aSMA_objects
    Name the masked objects:aSMA_cells_overlapping_CD8a_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:578|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
    Select objects to be masked:aSMA_cells_overlapping_CD8a_cells_whole
    Name the masked objects:aSMA_cells_overlapping_CD8a_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_CD8a_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:579|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
    Select objects to be masked:corrected_aSMA_objects
    Name the masked objects:aSMA_cells_with_CD8a_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_CD8a_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:580|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
    Select objects to be masked:aSMA_cells_with_CD8a_overlap_removed
    Name the masked objects:aSMA_cells_overlapping_CD4_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:581|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
    Select objects to be masked:aSMA_cells_with_CD8a_overlap_removed
    Name the masked objects:aSMA_cells_overlapping_CD4_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:582|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
    Select objects to be masked:aSMA_cells_overlapping_CD4_cells_whole
    Name the masked objects:aSMA_cells_overlapping_CD4_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_CD4_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:583|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
    Select objects to be masked:aSMA_cells_with_CD8a_overlap_removed
    Name the masked objects:aSMA_cells_with_CD4_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_CD4_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:584|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
    Select objects to be masked:aSMA_cells_with_CD4_overlap_removed
    Name the masked objects:aSMA_cells_overlapping_CD45_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:585|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
    Select objects to be masked:aSMA_cells_with_CD4_overlap_removed
    Name the masked objects:aSMA_cells_overlapping_CD45_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:586|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
    Select objects to be masked:aSMA_cells_overlapping_CD45_cells_whole
    Name the masked objects:aSMA_cells_overlapping_CD45_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_CD45_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:587|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
    Select objects to be masked:aSMA_cells_with_CD4_overlap_removed
    Name the masked objects:aSMA_cells_with_CD45_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_CD45_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:588|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
    Select objects to be masked:aSMA_cells_with_CD45_overlap_removed
    Name the masked objects:aSMA_cells_overlapping_panCK_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:589|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
    Select objects to be masked:aSMA_cells_with_CD45_overlap_removed
    Name the masked objects:aSMA_cells_overlapping_panCK_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:590|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
    Select objects to be masked:aSMA_cells_overlapping_panCK_cells_whole
    Name the masked objects:aSMA_cells_overlapping_panCK_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_panCK_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:591|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
    Select objects to be masked:aSMA_cells_with_CD45_overlap_removed
    Name the masked objects:aSMA_cells_with_panCK_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_panCK_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:592|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
    Select objects to be masked:aSMA_cells_with_panCK_overlap_removed
    Name the masked objects:aSMA_cells_overlapping_CD31_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:593|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
    Select objects to be masked:aSMA_cells_with_panCK_overlap_removed
    Name the masked objects:aSMA_cells_overlapping_CD31_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:594|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
    Select objects to be masked:aSMA_cells_overlapping_CD31_cells_whole
    Name the masked objects:aSMA_cells_overlapping_CD31_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_CD31_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:595|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
    Select objects to be masked:aSMA_cells_with_panCK_overlap_removed
    Name the masked objects:aSMA_cells_with_CD31_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_CD31_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:596|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
    Select objects to be masked:aSMA_cells_with_CD31_overlap_removed
    Name the masked objects:aSMA_cells_overlapping_CD3_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:597|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
    Select objects to be masked:aSMA_cells_with_CD31_overlap_removed
    Name the masked objects:aSMA_cells_overlapping_CD3_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:598|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
    Select objects to be masked:aSMA_cells_overlapping_CD3_cells_whole
    Name the masked objects:aSMA_cells_overlapping_CD3_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_CD3_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:599|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
    Select objects to be masked:aSMA_cells_with_CD31_overlap_removed
    Name the masked objects:aSMA_cells_with_CD3_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_CD3_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:600|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
    Select objects to be masked:aSMA_cells_with_CD3_overlap_removed
    Name the masked objects:aSMA_cells_overlapping_vimentin_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:601|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
    Select objects to be masked:aSMA_cells_with_CD3_overlap_removed
    Name the masked objects:aSMA_cells_overlapping_vimentin_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_vimentin_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:602|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
    Select objects to be masked:aSMA_cells_overlapping_vimentin_cells_whole
    Name the masked objects:aSMA_cells_overlapping_vimentin_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_vimentin_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:603|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
    Select objects to be masked:aSMA_cells_with_CD3_overlap_removed
    Name the masked objects:aSMA_cells_with_vimentin_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_overlapping_vimentin_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:604|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
    Select objects to be masked:aSMA_cells_with_vimentin_overlap_removed
    Name the masked objects:aSMA_cells_with_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:605|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
    Select objects to be masked:aSMA_cells_with_vimentin_overlap_removed
    Name the masked objects:aSMA_cells_without_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_with_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:606|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
    Select objects to be masked:aSMA_cells_without_CD8a_nuclei
    Name the masked objects:aSMA_cells_with_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:607|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
    Select objects to be masked:aSMA_cells_without_CD8a_nuclei
    Name the masked objects:aSMA_cells_without_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_with_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:608|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
    Select objects to be masked:aSMA_cells_without_CD4_nuclei
    Name the masked objects:aSMA_cells_with_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:609|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
    Select objects to be masked:aSMA_cells_without_CD4_nuclei
    Name the masked objects:aSMA_cells_without_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_with_CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:610|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
    Select objects to be masked:aSMA_cells_without_CD3_nuclei
    Name the masked objects:aSMA_cells_with_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:611|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
    Select objects to be masked:aSMA_cells_without_CD3_nuclei
    Name the masked objects:aSMA_cells_without_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_with_CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:612|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
    Select objects to be masked:aSMA_cells_without_CD45_nuclei
    Name the masked objects:aSMA_cells_with_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:613|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
    Select objects to be masked:aSMA_cells_without_CD45_nuclei
    Name the masked objects:aSMA_cells_without_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_with_panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:614|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
    Select objects to be masked:aSMA_cells_without_panCK_nuclei
    Name the masked objects:aSMA_cells_with_CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:615|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
    Select objects to be masked:aSMA_cells_without_panCK_nuclei
    Name the masked objects:aSMA_cells_without_CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_with_CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:616|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
    Select the input objects:aSMA_cells_without_CD31_nuclei
    Name the output image:aSMA_mask
    Select the color format:uint16
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
SaveImages:[module_num:617|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:aSMA_mask
    Select method for constructing file names:Single name
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    Enter single file name:aSMA_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskObjects:[module_num:618|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
    Select objects to be masked:corrected_vimentin_objects
    Name the masked objects:vimentin_cells_overlapping_CD8a_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:619|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
    Select objects to be masked:corrected_vimentin_objects
    Name the masked objects:vimentin_cells_overlapping_CD8a_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD8a_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:620|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
    Select objects to be masked:vimentin_cells_overlapping_CD8a_cells_whole
    Name the masked objects:vimentin_cells_overlapping_CD8a_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_CD8a_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:621|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
    Select objects to be masked:vimentin_masked_cells
    Name the masked objects:vimentin_cells_with_CD8a_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_CD8a_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:622|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
    Select objects to be masked:vimentin_cells_with_CD8a_overlap_removed
    Name the masked objects:vimentin_cells_overlapping_CD4_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:623|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
    Select objects to be masked:vimentin_cells_with_CD8a_overlap_removed
    Name the masked objects:vimentin_cells_overlapping_CD4_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD4_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:624|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
    Select objects to be masked:vimentin_cells_overlapping_CD4_cells_whole
    Name the masked objects:vimentin_cells_overlapping_CD4_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_CD4_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:625|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
    Select objects to be masked:vimentin_cells_with_CD8a_overlap_removed
    Name the masked objects:vimentin_cells_with_CD4_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_CD4_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:626|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
    Select objects to be masked:vimentin_cells_with_CD4_overlap_removed
    Name the masked objects:vimentin_cells_overlapping_CD3_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:627|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
    Select objects to be masked:vimentin_cells_with_CD4_overlap_removed
    Name the masked objects:vimentin_cells_overlapping_CD3_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD3_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:628|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
    Select objects to be masked:vimentin_cells_overlapping_CD3_cells_whole
    Name the masked objects:vimentin_cells_overlapping_CD3_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_CD3_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:629|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
    Select objects to be masked:vimentin_cells_with_CD4_overlap_removed
    Name the masked objects:vimentin_cells_with_CD3_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_CD3_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:630|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
    Select objects to be masked:vimentin_cells_with_CD3_overlap_removed
    Name the masked objects:vimentin_cells_overlapping_panCK_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:631|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
    Select objects to be masked:vimentin_cells_with_CD3_overlap_removed
    Name the masked objects:vimentin_cells_overlapping_panCK_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_panCK_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:632|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
    Select objects to be masked:vimentin_cells_overlapping_panCK_cells_whole
    Name the masked objects:vimentin_cells_overlapping_panCK_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_panCK_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:633|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
    Select objects to be masked:vimentin_cells_with_CD3_overlap_removed
    Name the masked objects:vimentin_cells_with_panCK_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_panCK_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:634|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
    Select objects to be masked:vimentin_cells_with_panCK_overlap_removed
    Name the masked objects:vimentin_cells_overlapping_CD31_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:635|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
    Select objects to be masked:vimentin_cells_with_panCK_overlap_removed
    Name the masked objects:vimentin_cells_overlapping_CD31_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD31_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:636|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
    Select objects to be masked:vimentin_cells_overlapping_CD31_cells_whole
    Name the masked objects:vimentin_cells_overlapping_CD31_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_CD31_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:637|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
    Select objects to be masked:vimentin_cells_with_panCK_overlap_removed
    Name the masked objects:vimentin_cells_with_CD31_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_CD31_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:638|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
    Select objects to be masked:vimentin_cells_with_CD31_overlap_removed
    Name the masked objects:vimentin_cells_overlapping_aSMA_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:639|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
    Select objects to be masked:vimentin_cells_with_CD31_overlap_removed
    Name the masked objects:vimentin_cells_overlapping_aSMA_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_aSMA_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:640|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
    Select objects to be masked:vimentin_cells_overlapping_aSMA_cells_whole
    Name the masked objects:vimentin_cells_overlapping_aSMA_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_aSMA_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:641|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
    Select objects to be masked:vimentin_cells_with_CD31_overlap_removed
    Name the masked objects:vimentin_cells_with_aSMA_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_aSMA_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:642|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
    Select objects to be masked:vimentin_cells_with_aSMA_overlap_removed
    Name the masked objects:vimentin_cells_overlapping_CD45_cells_consensus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:643|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
    Select objects to be masked:vimentin_cells_with_aSMA_overlap_removed
    Name the masked objects:vimentin_cells_overlapping_CD45_cells_whole
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:corrected_CD45_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:644|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
    Select objects to be masked:vimentin_cells_overlapping_CD45_cells_whole
    Name the masked objects:vimentin_cells_overlapping_CD45_cells_difference
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_CD45_cells_consensus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:645|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
    Select objects to be masked:vimentin_cells_with_aSMA_overlap_removed
    Name the masked objects:vimentin_cells_with_CD45_overlap_removed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_overlapping_CD45_cells_difference
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:646|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
    Select objects to be masked:vimentin_cells_with_CD45_overlap_removed
    Name the masked objects:vimentin_cells_with_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:647|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
    Select objects to be masked:vimentin_cells_with_CD45_overlap_removed
    Name the masked objects:vimentin_cells_without_CD8a_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_with_CD8a_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:648|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
    Select objects to be masked:vimentin_cells_without_CD8a_nuclei
    Name the masked objects:vimentin_cells_with_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:649|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
    Select objects to be masked:vimentin_cells_without_CD8a_nuclei
    Name the masked objects:vimentin_cells_without_CD4_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_with_CD4_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:650|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
    Select objects to be masked:vimentin_cells_without_CD4_nuclei
    Name the masked objects:vimentin_cells_with_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:651|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
    Select objects to be masked:vimentin_cells_without_CD4_nuclei
    Name the masked objects:vimentin_cells_without_CD3_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_with_CD3_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:652|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
    Select objects to be masked:vimentin_cells_without_CD3_nuclei
    Name the masked objects:vimentin_cells_with_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:653|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
    Select objects to be masked:vimentin_cells_without_CD3_nuclei
    Name the masked objects:vimentin_cells_without_CD45_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_with_CD45_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:654|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
    Select objects to be masked:vimentin_cells_without_CD45_nuclei
    Name the masked objects:vimentin_cells_with_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:655|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
    Select objects to be masked:vimentin_cells_without_CD45_nuclei
    Name the masked objects:vimentin_cells_without_panCK_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_with_panCK_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:656|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
    Select objects to be masked:vimentin_cells_without_panCK_nuclei
    Name the masked objects:vimentin_cells_with_CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:657|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
    Select objects to be masked:vimentin_cells_without_panCK_nuclei
    Name the masked objects:vimentin_cells_without_CD31_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_with_CD31_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:658|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
    Select objects to be masked:vimentin_cells_without_CD31_nuclei
    Name the masked objects:vimentin_cells_with_aSMA_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:659|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
    Select objects to be masked:vimentin_cells_without_CD31_nuclei
    Name the masked objects:vimentin_cells_without_aSMA_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_with_aSMA_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:660|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
    Select the input objects:vimentin_cells_without_aSMA_nuclei
    Name the output image:vimentin_mask
    Select the color format:uint16
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
SaveImages:[module_num:661|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:vimentin_mask
    Select method for constructing file names:Single name
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    Enter single file name:vimentin_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskObjects:[module_num:662|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
    Select objects to be masked:nuclei
    Name the masked objects:nuclei_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_final
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:663|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
    Select objects to be masked:nuclei_masked_by_CD8a_cells
    Name the masked objects:nuclei_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_final
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:664|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
    Select objects to be masked:nuclei_masked_by_CD4_cells
    Name the masked objects:nuclei_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_final
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:665|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
    Select objects to be masked:nuclei_masked_by_CD3_cells
    Name the masked objects:nuclei_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_final
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:666|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
    Select objects to be masked:nuclei_masked_by_CD45_cells
    Name the masked objects:nuclei_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_final
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:667|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
    Select objects to be masked:nuclei_masked_by_panCK_cells
    Name the masked objects:nuclei_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_final
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:668|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
    Select objects to be masked:nuclei_masked_by_CD31_cells
    Name the masked objects:nuclei_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_final
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:669|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
    Select objects to be masked:nuclei_masked_by_aSMA_cells
    Name the masked objects:nuclei_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_final
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ExpandOrShrinkObjects:[module_num:670|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
    Select the input objects:nuclei_masked_by_vimentin_cells
    Name the output objects:dilated_nuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MaskObjects:[module_num:671|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
    Select objects to be masked:dilated_nuclei
    Name the masked objects:dilated_nuclei_masked_by_CD8a_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD8a_cells_final
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:672|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
    Select objects to be masked:dilated_nuclei_masked_by_CD8a_cells
    Name the masked objects:dilated_nuclei_masked_by_CD4_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD4_cells_final
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:673|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
    Select objects to be masked:dilated_nuclei_masked_by_CD4_cells
    Name the masked objects:dilated_nuclei_masked_by_CD3_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD3_cells_final
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:674|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
    Select objects to be masked:dilated_nuclei_masked_by_CD3_cells
    Name the masked objects:dilated_nuclei_masked_by_CD45_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD45_cells_final
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:675|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
    Select objects to be masked:dilated_nuclei_masked_by_CD45_cells
    Name the masked objects:dilated_nuclei_masked_by_panCK_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:panCK_cells_final
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:676|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
    Select objects to be masked:dilated_nuclei_masked_by_panCK_cells
    Name the masked objects:dilated_nuclei_masked_by_CD31_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_cells_final
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:677|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
    Select objects to be masked:dilated_nuclei_masked_by_CD31_cells
    Name the masked objects:dilated_nuclei_masked_by_aSMA_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:aSMA_cells_final
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:678|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
    Select objects to be masked:dilated_nuclei_masked_by_aSMA_cells
    Name the masked objects:dilated_nuclei_masked_by_vimentin_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:vimentin_cells_final
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:679|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
    Select the input objects:dilated_nuclei_masked_by_vimentin_cells
    Name the output image:nuclei_subset_mask
    Select the color format:uint16
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
SaveImages:[module_num:680|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:nuclei_subset_mask
    Select method for constructing file names:Single name
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    Enter single file name:nuclei_subset_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureImageIntensity:[module_num:681|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
    Select the image to measure:CD8a_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:682|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:normalized_CD8a_mask
    Image or measurement?:Image
    Select the first image:CD8a_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_CD8a_mask

MeasureImageIntensity:[module_num:683|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
    Select the image to measure:CD4_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:684|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:normalized_CD4_mask
    Image or measurement?:Image
    Select the first image:CD4_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_CD4_mask

MeasureImageIntensity:[module_num:685|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
    Select the image to measure:CD3_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:686|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:normalized_CD3_mask
    Image or measurement?:Image
    Select the first image:CD3_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_CD3_mask

MeasureImageIntensity:[module_num:687|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
    Select the image to measure:CD45_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:688|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:normalized_CD45_mask
    Image or measurement?:Image
    Select the first image:CD45_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_CD45_mask

MeasureImageIntensity:[module_num:689|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
    Select the image to measure:panCK_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:690|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:normalized_panCK_mask
    Image or measurement?:Image
    Select the first image:panCK_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_panCK_mask

MeasureImageIntensity:[module_num:691|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
    Select the image to measure:CD31_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:692|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:normalized_CD31_mask
    Image or measurement?:Image
    Select the first image:CD31_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_CD31_mask

MeasureImageIntensity:[module_num:693|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
    Select the image to measure:aSMA_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:694|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:normalized_aSMA_mask
    Image or measurement?:Image
    Select the first image:aSMA_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_aSMA_mask

MeasureImageIntensity:[module_num:695|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
    Select the image to measure:vimentin_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:696|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:normalized_vimentin_mask
    Image or measurement?:Image
    Select the first image:vimentin_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_vimentin_mask

MeasureImageIntensity:[module_num:697|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
    Select the image to measure:nuclei_subset_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:698|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:normalized_nuclei_subset_mask
    Image or measurement?:Image
    Select the first image:nuclei_subset_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_nuclei_subset_mask

MeasureImageIntensity:[module_num:699|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
    Select the image to measure:normalized_CD8a_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:700|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:CD4_draft_one
    Image or measurement?:Image
    Select the first image:normalized_CD4_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_normalized_CD8a_mask

ImageMath:[module_num:701|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:CD4_draft_two
    Image or measurement?:Image
    Select the first image:CD4_draft_one
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_normalized_CD8a_mask

MeasureImageIntensity:[module_num:702|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
    Select the image to measure:CD4_draft_two
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:703|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:CD4_draft_three
    Image or measurement?:Image
    Select the first image:CD4_draft_two
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_CD4_draft_two

MaskImage:[module_num:704|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
    Select the input image:CD4_draft_one
    Name the output image:adjusted_CD4_mask
    Use objects or an image as a mask?:Image
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    Select image for mask:CD4_draft_three
    Invert the mask?:Yes

ImageMath:[module_num:705|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:draft_CD8a_CD4_mask
    Image or measurement?:Image
    Select the first image:normalized_CD8a_mask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:adjusted_CD4_mask
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:706|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
    Select the input image:draft_CD8a_CD4_mask
    Name the output image:rescaled_CD8a_CD4_mask
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:707|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
    Select the input image:rescaled_CD8a_CD4_mask
    Name the output object:CD8a_CD4_mask_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:708|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
    Select objects to be masked:CD8a_CD4_mask_objects
    Name the masked objects:CD8a_CD4_mask_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:709|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
    Select the input objects:CD8a_CD4_mask_cells
    Name the output image:CD8a_CD4_mask
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:710|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
    Select the image to measure:CD8a_CD4_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:711|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:CD3_draft_one
    Image or measurement?:Image
    Select the first image:normalized_CD3_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_CD8a_CD4_mask

ImageMath:[module_num:712|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:CD3_draft_two
    Image or measurement?:Image
    Select the first image:CD3_draft_one
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_CD8a_CD4_mask

MeasureImageIntensity:[module_num:713|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
    Select the image to measure:CD3_draft_two
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:714|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:CD3_draft_three
    Image or measurement?:Image
    Select the first image:CD3_draft_two
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_CD3_draft_two

MaskImage:[module_num:715|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
    Select the input image:CD3_draft_one
    Name the output image:adjusted_CD3_mask
    Use objects or an image as a mask?:Image
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    Select image for mask:CD3_draft_three
    Invert the mask?:Yes

ImageMath:[module_num:716|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:draft_CD8a_CD4_CD3_mask
    Image or measurement?:Image
    Select the first image:CD8a_CD4_mask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:adjusted_CD3_mask
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:717|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
    Select the input image:draft_CD8a_CD4_CD3_mask
    Name the output image:rescaled_CD8a_CD4_CD3_mask
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:718|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
    Select the input image:rescaled_CD8a_CD4_CD3_mask
    Name the output object:CD8a_CD4_CD3_mask_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:719|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
    Select objects to be masked:CD8a_CD4_CD3_mask_objects
    Name the masked objects:CD8a_CD4_CD3_mask_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:720|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
    Select the input objects:CD8a_CD4_CD3_mask_cells
    Name the output image:CD8a_CD4_CD3_mask
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:721|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
    Select the image to measure:CD8a_CD4_CD3_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:722|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:CD45_draft_one
    Image or measurement?:Image
    Select the first image:normalized_CD45_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_CD8a_CD4_CD3_mask

ImageMath:[module_num:723|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:CD45_draft_two
    Image or measurement?:Image
    Select the first image:CD45_draft_one
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_CD8a_CD4_CD3_mask

MeasureImageIntensity:[module_num:724|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
    Select the image to measure:CD45_draft_two
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:725|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:CD45_draft_three
    Image or measurement?:Image
    Select the first image:CD45_draft_two
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_CD45_draft_two

MaskImage:[module_num:726|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
    Select the input image:CD45_draft_one
    Name the output image:adjusted_CD45_mask
    Use objects or an image as a mask?:Image
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    Select image for mask:CD45_draft_three
    Invert the mask?:Yes

ImageMath:[module_num:727|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:draft_CD45_CD8a_CD4_CD3_mask
    Image or measurement?:Image
    Select the first image:CD8a_CD4_CD3_mask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:adjusted_CD45_mask
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:728|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
    Select the input image:draft_CD45_CD8a_CD4_CD3_mask
    Name the output image:rescaled_CD45_CD8a_CD4_CD3_mask
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:729|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
    Select the input image:rescaled_CD45_CD8a_CD4_CD3_mask
    Name the output object:CD45_CD8a_CD4_CD3_mask_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:730|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
    Select objects to be masked:CD45_CD8a_CD4_CD3_mask_objects
    Name the masked objects:CD45_CD8a_CD4_CD3_mask_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:731|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
    Select the input objects:CD45_CD8a_CD4_CD3_mask_cells
    Name the output image:CD45_CD8a_CD4_CD3_mask
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:732|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
    Select the image to measure:CD45_CD8a_CD4_CD3_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:733|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:panCK_draft_one
    Image or measurement?:Image
    Select the first image:normalized_panCK_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_CD45_CD8a_CD4_CD3_mask

ImageMath:[module_num:734|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:panCK_draft_two
    Image or measurement?:Image
    Select the first image:panCK_draft_one
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_CD45_CD8a_CD4_CD3_mask

MeasureImageIntensity:[module_num:735|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
    Select the image to measure:panCK_draft_two
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:736|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:panCK_draft_three
    Image or measurement?:Image
    Select the first image:panCK_draft_two
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_panCK_draft_two

MaskImage:[module_num:737|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
    Select the input image:panCK_draft_one
    Name the output image:adjusted_panCK_mask
    Use objects or an image as a mask?:Image
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    Select image for mask:panCK_draft_three
    Invert the mask?:Yes

ImageMath:[module_num:738|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:draft_panCK_plus_all_mask
    Image or measurement?:Image
    Select the first image:CD45_CD8a_CD4_CD3_mask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:adjusted_panCK_mask
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:739|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
    Select the input image:draft_panCK_plus_all_mask
    Name the output image:rescaled_panCK_plus_all_mask
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:740|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
    Select the input image:rescaled_panCK_plus_all_mask
    Name the output object:panCK_plus_all_mask_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:741|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
    Select objects to be masked:panCK_plus_all_mask_objects
    Name the masked objects:panCK_plus_all_mask_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:742|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
    Select the input objects:panCK_plus_all_mask_cells
    Name the output image:panCK_plus_all_mask
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:743|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
    Select the image to measure:panCK_plus_all_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:744|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:CD31_draft_one
    Image or measurement?:Image
    Select the first image:normalized_CD31_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_panCK_plus_all_mask

ImageMath:[module_num:745|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:CD31_draft_two
    Image or measurement?:Image
    Select the first image:CD31_draft_one
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_panCK_plus_all_mask

MeasureImageIntensity:[module_num:746|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
    Select the image to measure:CD31_draft_two
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:747|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:CD31_draft_three
    Image or measurement?:Image
    Select the first image:CD31_draft_two
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_CD31_draft_two

MaskImage:[module_num:748|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
    Select the input image:CD31_draft_one
    Name the output image:adjusted_CD31_mask
    Use objects or an image as a mask?:Image
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    Select image for mask:CD31_draft_three
    Invert the mask?:Yes

ImageMath:[module_num:749|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:draft_CD31_plus_all_mask
    Image or measurement?:Image
    Select the first image:panCK_plus_all_mask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:adjusted_CD31_mask
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:750|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
    Select the input image:draft_CD31_plus_all_mask
    Name the output image:rescaled_CD31_plus_all_mask
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:751|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
    Select the input image:rescaled_CD31_plus_all_mask
    Name the output object:CD31_plus_all_mask_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:752|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
    Select objects to be masked:CD31_plus_all_mask_objects
    Name the masked objects:CD31_plus_all_mask_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:753|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
    Select the input objects:CD31_plus_all_mask_cells
    Name the output image:CD31_plus_all_mask
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:754|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
    Select the image to measure:CD31_plus_all_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:755|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:aSMA_draft_one
    Image or measurement?:Image
    Select the first image:normalized_aSMA_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_CD31_plus_all_mask

ImageMath:[module_num:756|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:aSMA_draft_two
    Image or measurement?:Image
    Select the first image:aSMA_draft_one
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_CD31_plus_all_mask

MeasureImageIntensity:[module_num:757|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
    Select the image to measure:aSMA_draft_two
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:758|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:aSMA_draft_three
    Image or measurement?:Image
    Select the first image:aSMA_draft_two
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_aSMA_draft_two

MaskImage:[module_num:759|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
    Select the input image:aSMA_draft_one
    Name the output image:adjusted_aSMA_mask
    Use objects or an image as a mask?:Image
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    Select image for mask:aSMA_draft_three
    Invert the mask?:Yes

ImageMath:[module_num:760|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:draft_aSMA_plus_all_mask
    Image or measurement?:Image
    Select the first image:CD31_plus_all_mask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:adjusted_aSMA_mask
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:761|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
    Select the input image:draft_aSMA_plus_all_mask
    Name the output image:rescaled_aSMA_plus_all_mask
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:762|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
    Select the input image:rescaled_aSMA_plus_all_mask
    Name the output object:aSMA_plus_all_mask_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:763|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
    Select objects to be masked:aSMA_plus_all_mask_objects
    Name the masked objects:aSMA_plus_all_mask_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:764|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
    Select the input objects:aSMA_plus_all_mask_cells
    Name the output image:aSMA_plus_all_mask
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:765|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
    Select the image to measure:aSMA_plus_all_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:766|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:vimentin_draft_one
    Image or measurement?:Image
    Select the first image:normalized_vimentin_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_aSMA_plus_all_mask

ImageMath:[module_num:767|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:vimentin_draft_two
    Image or measurement?:Image
    Select the first image:vimentin_draft_one
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_aSMA_plus_all_mask

MeasureImageIntensity:[module_num:768|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
    Select the image to measure:vimentin_draft_two
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:769|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:vimentin_draft_three
    Image or measurement?:Image
    Select the first image:vimentin_draft_two
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_vimentin_draft_two

MaskImage:[module_num:770|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
    Select the input image:vimentin_draft_one
    Name the output image:adjusted_vimentin_mask
    Use objects or an image as a mask?:Image
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    Select image for mask:vimentin_draft_three
    Invert the mask?:Yes

ImageMath:[module_num:771|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:draft_vimentin_plus_all_mask
    Image or measurement?:Image
    Select the first image:aSMA_plus_all_mask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:adjusted_vimentin_mask
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:772|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
    Select the input image:draft_vimentin_plus_all_mask
    Name the output image:rescaled_vimentin_plus_all_mask
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:773|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
    Select the input image:rescaled_vimentin_plus_all_mask
    Name the output object:vimentin_plus_all_mask_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:774|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
    Select objects to be masked:vimentin_plus_all_mask_objects
    Name the masked objects:vimentin_plus_all_mask_cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:775|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
    Select the input objects:vimentin_plus_all_mask_cells
    Name the output image:vimentin_plus_all_mask
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:776|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
    Select the image to measure:vimentin_plus_all_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:777|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:nuclei_draft_one
    Image or measurement?:Image
    Select the first image:normalized_nuclei_subset_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_vimentin_plus_all_mask

ImageMath:[module_num:778|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:nuclei_draft_two
    Image or measurement?:Image
    Select the first image:nuclei_draft_one
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_vimentin_plus_all_mask

MeasureImageIntensity:[module_num:779|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
    Select the image to measure:nuclei_draft_two
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:780|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:nuclei_draft_three
    Image or measurement?:Image
    Select the first image:nuclei_draft_two
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_nuclei_draft_two

MaskImage:[module_num:781|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
    Select the input image:nuclei_draft_one
    Name the output image:adjusted_nuclei_mask
    Use objects or an image as a mask?:Image
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    Select image for mask:nuclei_draft_three
    Invert the mask?:Yes

ImageMath:[module_num:782|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:cells_mask
    Image or measurement?:Image
    Select the first image:vimentin_plus_all_mask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:adjusted_nuclei_mask
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:783|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
    Select the input image:cells_mask
    Name the output image:rescaled_cells_mask
    Rescaling method:Divide by the image's maximum
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
ConvertImageToObjects:[module_num:784|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
    Select the input image:rescaled_cells_mask
    Name the output object:total_nucleated_cells_mask
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:785|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
    Select objects to be masked:total_nucleated_cells_mask
    Name the masked objects:only_nucleated_cells_mask
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:786|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notes:['']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
    Select objects to be masked:aSMA_plus_filtered
    Name the masked objects:masked_aSMA_plus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:only_nucleated_cells_mask
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.67
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:787|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
    Select objects to be masked:masked_aSMA_plus
    Name the masked objects:masked_aSMA_plus_reduced
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:only_nucleated_cells_mask
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:788|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
    Select the input objects:masked_aSMA_plus_reduced
    Name the output image:masked_aSMA_plus_image
    Select the color format:uint16
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
ConvertImageToObjects:[module_num:789|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
    Select the input image:masked_aSMA_plus_image
    Name the output object:masked_aSMA_plus_objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:790|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
    Select objects to measure:masked_aSMA_plus_objects
    Calculate the Zernike features?:No

FilterObjects:[module_num:791|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notes:['']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
    Select the objects to filter:masked_aSMA_plus_objects
    Name the output objects:filtered_aSMA_plus
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:Yes
    Maximum value:1000

ConvertObjectsToImage:[module_num:792|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
    Select the input objects:filtered_aSMA_plus
    Name the output image:aSMA_plus_mask
    Select the color format:uint16
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
SaveImages:[module_num:793|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:aSMA_plus_mask
    Select method for constructing file names:Single name
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    Enter single file name:aSMAplus_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureImageIntensity:[module_num:794|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
    Select the image to measure:aSMA_plus_mask
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:795|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:normalized_aSMA_plus_mask
    Image or measurement?:Image
    Select the first image:aSMA_plus_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_aSMA_plus_mask

ConvertObjectsToImage:[module_num:796|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
    Select the input objects:only_nucleated_cells_mask
    Name the output image:only_nucleated_cells_image
    Select the color format:uint16
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
MeasureImageIntensity:[module_num:797|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
    Select the image to measure:only_nucleated_cells_image
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:798|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:aSMAnn_draft_one
    Image or measurement?:Image
    Select the first image:normalized_aSMA_plus_mask
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_only_nucleated_cells_image

ImageMath:[module_num:799|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:aSMAnn_draft_two
    Image or measurement?:Image
    Select the first image:aSMAnn_draft_one
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_only_nucleated_cells_image

MeasureImageIntensity:[module_num:800|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
    Select the image to measure:aSMAnn_draft_two
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:801|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
    Operation:Equals
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:aSMAnn_draft_three
    Image or measurement?:Image
    Select the first image:aSMAnn_draft_two
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MaxIntensity_aSMAnn_draft_two

MaskImage:[module_num:802|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
    Select the input image:aSMAnn_draft_one
    Name the output image:adjusted_aSMAnn_mask
    Use objects or an image as a mask?:Image
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    Select image for mask:aSMAnn_draft_three
    Invert the mask?:Yes

ImageMath:[module_num:803|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:Yes
    Name the output image:aSMAnn_plus_all_mask
    Image or measurement?:Image
    Select the first image:only_nucleated_cells_image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:adjusted_aSMAnn_mask
    Multiply the second image by:1.0
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
MeasureImageIntensity:[module_num:804|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
    Select the image to measure:aSMAnn_plus_all_mask
    Measure the intensity only from areas enclosed by objects?:No
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
RescaleIntensity:[module_num:805|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
    Select the input image:aSMAnn_plus_all_mask
    Name the output image:rescaled_total_cells_mask
    Rescaling method:Divide by the image's maximum
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
ConvertImageToObjects:[module_num:806|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
    Select the input image:rescaled_total_cells_mask
    Name the output object:unfiltered_cells_mask
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:807|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
    Select objects to measure:unfiltered_cells_mask
    Calculate the Zernike features?:No

FilterObjects:[module_num:808|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notes:['changed from 1257 to 1000']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
    Select the objects to filter:unfiltered_cells_mask
    Name the output objects:total_cells_mask
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:4
    Filter using a maximum measurement value?:Yes
    Maximum value:1000

FilterObjects:[module_num:809|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notes:['']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enabled:False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
    Select the objects to filter:total_cells_mask_edge
    Name the output objects:total_cells_mask
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
ConvertObjectsToImage:[module_num:810|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
    Select the input objects:total_cells_mask
    Name the output image:total_cells_image
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:811|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
    Select the input objects:total_cells_mask
    Name the output image:total_cells_binary
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:812|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
    Select the type of image to save:Image
    Select the image to save:total_cells_image
    Select method for constructing file names:Single name
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    Enter single file name:total_cells_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:813|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
    Select the type of image to save:Image
    Select the image to save:total_cells_binary
    Select method for constructing file names:Single name
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    Enter single file name:total_cells_binary
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExpandOrShrinkObjects:[module_num:814|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enabled:False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
    Select the input objects:nuclei
    Name the output objects:nuclei_plus_one
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
ExpandOrShrinkObjects:[module_num:815|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enabled:False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
    Select the input objects:nuclei
    Name the output objects:nuclei_plus_three
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
ConvertObjectsToImage:[module_num:816|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enabled:False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
    Select the input objects:nuclei_plus_one
    Name the output image:nuclei_plus_one
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:817|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enabled:False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
    Select the input objects:nuclei_plus_three
    Name the output image:nuclei_plus_three
    Select the color format:uint16
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
SaveImages:[module_num:818|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:nuclei_plus_one
    Select method for constructing file names:Single name
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    Enter single file name:nuclei_plus_one
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:819|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:nuclei_plus_three
    Select method for constructing file names:Single name
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    Enter single file name:nuclei_plus_three
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:820|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
    Select objects to measure:total_cells_mask
    Select objects to measure:nuclei
    Calculate the Zernike features?:No

MeasureObjectIntensity Multichannel:[module_num:821|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notes:['B2M; CCR7; CD103; CD25; CD27; CD3; CD39; CD4; CD45; CD45RA; CD57; CD8; CTLA4; CXCL12; CXCR4;CXCR6; (Collagen); FOXP3; GATA3; GITR; GZMB; ICOS; Ki67; LAG3; PD1; PDL1; TIM3; Vimentin; alphaSMA; casp3; pSTAT1; pancytokeratin']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
    Hidden:35
    Select an image to measure:B2M
    Select an image to measure:CCR7
    Select an image to measure:CD103
    Select an image to measure:CD25
    Select an image to measure:CD27
    Select an image to measure:CD3
    Select an image to measure:CD39
    Select an image to measure:CD4
    Select an image to measure:CD45
    Select an image to measure:CD45RA
    Select an image to measure:CD57
    Select an image to measure:CD8a
    Select an image to measure:CTLA4
    Select an image to measure:CXCL12
    Select an image to measure:CXCR4
    Select an image to measure:CXCR6
    Select an image to measure:collagen1
    Select an image to measure:FOXP3
    Select an image to measure:GATA3
    Select an image to measure:GITR
    Select an image to measure:GZMB
    Select an image to measure:ICOS
    Select an image to measure:Ki67
    Select an image to measure:LAG3
    Select an image to measure:PD1
    Select an image to measure:PDL1
    Select an image to measure:TIM3
    Select an image to measure:vimentin
    Select an image to measure:aSMA
    Select an image to measure:CASP3
    Select an image to measure:pSTAT1
    Select an image to measure:panCK
    Select an image to measure:CD31
    Select an image to measure:FAP1
    Select an image to measure:TCF1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Select objects to measure:total_cells_mask
    Select objects to measure:nuclei

ExportToSpreadsheet:[module_num:822|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:nuclei|Number_Object_Number,nuclei|Intensity_MassDisplacement_TIM3_c1,nuclei|Intensity_MassDisplacement_GITR_c1,nuclei|Intensity_MassDisplacement_CD39_c1,nuclei|Intensity_MassDisplacement_CD31_c1,nuclei|Intensity_MassDisplacement_CD3_c1,nuclei|Intensity_MassDisplacement_FAP1_c1,nuclei|Intensity_MassDisplacement_LAG3_c1,nuclei|Intensity_MassDisplacement_CD4_c1,nuclei|Intensity_MassDisplacement_aSMA_c1,nuclei|Intensity_MassDisplacement_Vimentin_c1,nuclei|Intensity_MassDisplacement_CCR7_c1,nuclei|Intensity_MassDisplacement_CD57_c1,nuclei|Intensity_MassDisplacement_casp3_c1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:nuclei
    Combine these object measurements with those of the previous object?:No
    File name:nuclei.csv
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:823|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:total_cells_mask|Number_Object_Number,total_cells_mask|Intensity_StdIntensity_FOXP3_c1,total_cells_mask|Intensity_StdIntensity_CD57_c1,total_cells_mask|Intensity_StdIntensity_CD39_c1,total_cells_mask|Intensity_StdIntensity_CD31_c1,total_cells_mask|Intensity_StdIntensity_CCR7_c1,total_cells_mask|Intensity_StdIntensity_FAP1_c1,total_cells_mask|Intensity_StdIntensity_LAG3_c1,total_cells_mask|Intensity_StdIntensity_CD4_c1,total_cells_mask|Intensity_StdIntensity_B2M_c1,total_cells_mask|Intensity_StdIntensity_GITR_c1,total_cells_mask|Intensity_StdIntensity_CD3_c1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:total_cells_mask
    Combine these object measurements with those of the previous object?:No
    File name:cells.csv
    Use the object name for the file name?:No

ConvertObjectsToImage:[module_num:824|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enabled:False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
    Select the input objects:nuclei
    Name the output image:nuclei_renumbered
    Select the color format:uint16
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
ConvertImageToObjects:[module_num:825|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enabled:False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
    Select the input image:nuclei_renumbered
    Name the output object:nuclei_renumbered
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

RelateObjects:[module_num:826|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enabled:False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
    Parent objects:nuclei
    Child objects:nuclei_renumbered
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:827|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enabled:False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
    Parent objects:total_cells_mask
    Child objects:nuclei_renumbered
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:828|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:nuclei_renumbered|Location_Center_Y,nuclei_renumbered|Location_Center_X,nuclei_renumbered|Parent_total_cells_mask,nuclei_renumbered|Parent_nuclei
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:nuclei_renumbered
    Combine these object measurements with those of the previous object?:No
    File name:nuclei_cells_linked.csv
    Use the object name for the file name?:No

MeasureObjectNeighbors:[module_num:829|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enabled:False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
    Select objects to measure:total_cells_mask
    Select neighboring objects to measure:total_cells_mask
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ObjectNeighborCount5
    Select colormap:Default
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PercentTouching5
    Select colormap:Default

SaveImages:[module_num:830|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:ObjectNeighborCount5
    Select method for constructing file names:Single name
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    Enter single file name:objectneighbourcount5
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:831|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:PercentTouching5
    Select method for constructing file names:Single name
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    Enter single file name:percentbordertouching5
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:832|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:total_cells_mask|Neighbors_SecondClosestDistance_10,total_cells_mask|Neighbors_SecondClosestDistance_5,total_cells_mask|Neighbors_FirstClosestDistance_10,total_cells_mask|Neighbors_FirstClosestDistance_5,total_cells_mask|Neighbors_FirstClosestObjectNumber_10,total_cells_mask|Neighbors_FirstClosestObjectNumber_5,total_cells_mask|Neighbors_SecondClosestObjectNumber_10,total_cells_mask|Neighbors_SecondClosestObjectNumber_5,total_cells_mask|Neighbors_PercentTouching_10,total_cells_mask|Neighbors_PercentTouching_5,total_cells_mask|Neighbors_NumberOfNeighbors_10,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:neighbourhood.csv
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:833|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:total_cells_mask|Neighbors_SecondClosestDistance_10,total_cells_mask|Neighbors_SecondClosestDistance_5,total_cells_mask|Neighbors_FirstClosestDistance_10,total_cells_mask|Neighbors_FirstClosestDistance_5,total_cells_mask|Neighbors_FirstClosestObjectNumber_10,total_cells_mask|Neighbors_FirstClosestObjectNumber_5,total_cells_mask|Neighbors_SecondClosestObjectNumber_10,total_cells_mask|Neighbors_SecondClosestObjectNumber_5,total_cells_mask|Neighbors_PercentTouching_10,total_cells_mask|Neighbors_PercentTouching_5,total_cells_mask|Neighbors_NumberOfNeighbors_10,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:total_cells_mask
    Combine these object measurements with those of the previous object?:No
    File name:neighbourhood_full.csv
    Use the object name for the file name?:No
