CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:97
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:42
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "80")
    Name to assign these images:Argon
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "100")
    Name to assign these images:ruthenium
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "131")
    Name to assign these images:Xenon131
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "134")
    Name to assign these images:Xenon134
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "141")
    Name to assign these images:aSMA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "142")
    Name to assign these images:CCR7
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "143")
    Name to assign these images:vimentin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "144")
    Name to assign these images:CD57
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "145")
    Name to assign these images:CTLA4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "146")
    Name to assign these images:FAP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "147")
    Name to assign these images:CXCR6
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "148")
    Name to assign these images:ICOS
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "149")
    Name to assign these images:GATA3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "150")
    Name to assign these images:PDL1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "151")
    Name to assign these images:CD31
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "152")
    Name to assign these images:CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "153")
    Name to assign these images:LAG3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "154")
    Name to assign these images:TIM3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "155")
    Name to assign these images:FOXP3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "156")
    Name to assign these images:CD4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "158")
    Name to assign these images:CXCL12
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "159")
    Name to assign these images:CXCR4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "160")
    Name to assign these images:GITR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "161")
    Name to assign these images:CD39
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "162")
    Name to assign these images:CD8a
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "163Dy")
    Name to assign these images:CD103
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "164")
    Name to assign these images:panCK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "165")
    Name to assign these images:PD1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "166")
    Name to assign these images:CD45RA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "167")
    Name to assign these images:GZMB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "168")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "169")
    Name to assign these images:collagen1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "170")
    Name to assign these images:CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "171")
    Name to assign these images:CD27
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "172")
    Name to assign these images:CASP3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "173")
    Name to assign these images:B2M
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "174")
    Name to assign these images:pSTAT1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "175")
    Name to assign these images:CD25
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "176")
    Name to assign these images:TCF1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "191")
    Name to assign these images:DNA1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "193")
    Name to assign these images:DNA2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "imc")
    Name to assign these images:spillover_matrix
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GrayToColor:[module_num:5|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
    Select a color scheme:Stack
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    Name the output image:full_stack
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    Hidden:35
    Image name:aSMA
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    Image name:CCR7
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    Image name:vimentin
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    Image name:CD57
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    Image name:CTLA4
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    Image name:FAP1
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    Image name:CXCR6
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    Image name:ICOS
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    Image name:GATA3
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    Image name:PDL1
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    Image name:CD31
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    Image name:CD45
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    Image name:LAG3
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    Image name:TIM3
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    Image name:FOXP3
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    Image name:CD4
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    Image name:CXCL12
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    Image name:CXCR4
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    Image name:GITR
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    Image name:CD39
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    Image name:CD8a
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    Image name:CD103
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    Image name:panCK
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    Image name:PD1
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    Image name:CD45RA
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    Image name:GZMB
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    Image name:Ki67
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    Image name:collagen1
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    Image name:CD3
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    Image name:CD27
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    Image name:CASP3
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    Image name:B2M
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    Image name:pSTAT1
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    Image name:CD25
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    Image name:TCF1
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
CorrectSpilloverApply:[module_num:6|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enabled:False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
    Select the input image:CD38
    Name the output image:CD38_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:MPO
    Name the output image:MPO_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:MCT4
    Name the output image:MCT4_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD14
    Name the output image:CD14_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:TCRd
    Name the output image:TCRd_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD16
    Name the output image:CD16_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD163
    Name the output image:CD163_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:KIR2DL3
    Name the output image:KIR2DL3_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD11b
    Name the output image:CD11b_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:PDL1
    Name the output image:PDL1_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD31
    Name the output image:CD31_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD45
    Name the output image:CD45_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:LAG3
    Name the output image:LAG3_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:TIM3
    Name the output image:TIM3_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:IDO
    Name the output image:IDO_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD4
    Name the output image:CD4_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD79a
    Name the output image:CD79a_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD68
    Name the output image:CD68_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:VISTA
    Name the output image:VISTA_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD20
    Name the output image:CD20_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD8a
    Name the output image:CD8a_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD103
    Name the output image:CD103_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:panCK
    Name the output image:panCK_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:PD1
    Name the output image:PD1_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CLEC9a
    Name the output image:CLEC9a_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:GZMB
    Name the output image:GZMB_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD73
    Name the output image:CD73_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD206
    Name the output image:CD206_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD3
    Name the output image:CD3_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD66b
    Name the output image:CD66b_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD56
    Name the output image:CD56_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:MHCII
    Name the output image:MHCII_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CD11c
    Name the output image:CD11c_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:panactin
    Name the output image:panactin_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares
    Select the input image:CAIX
    Name the output image:CAIX_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares

CorrectSpilloverApply:[module_num:7|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
    Select the input image:full_stack
    Name the output image:stack_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares

Smooth Multichannel:[module_num:8|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
    Select the input image:stack_spill_corrected
    Name the output image:FilteredImage
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

ColorToGray:[module_num:9|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
    Select the input image:FilteredImage
    Conversion method:Split
    Image type:Channels
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    Channel count:35
    Channel number:1
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    Image name:aSMA_corrected
    Channel number:2
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    Image name:CCR7_corrected
    Channel number:3
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    Image name:vimentin_corrected
    Channel number:4
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    Image name:CD57_corrected
    Channel number:5
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    Image name:CTLA4_corrected
    Channel number:6
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    Image name:FAP1_corrected
    Channel number:7
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    Image name:CXCR6_corrected
    Channel number:8
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    Image name:ICOS_corrected
    Channel number:9
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    Image name:GATA3_corrected
    Channel number:10
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    Image name:PDL1_corrected
    Channel number:11
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    Image name:CD31_corrected
    Channel number:12
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    Image name:CD45_corrected
    Channel number:13
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    Image name:LAG3_corrected
    Channel number:14
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    Image name:TIM3_corrected
    Channel number:15
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    Image name:FOXP3_corrected
    Channel number:16
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    Image name:CD4_corrected
    Channel number:17
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    Image name:CXCL12_corrected
    Channel number:18
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    Image name:CXCR4_corrected
    Channel number:19
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    Image name:GITR_corrected
    Channel number:20
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    Image name:CD39_corrected
    Channel number:21
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    Image name:CD8a_corrected
    Channel number:22
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    Image name:CD103_corrected
    Channel number:23
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    Image name:panCK_corrected
    Channel number:24
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    Image name:PD1_corrected
    Channel number:25
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    Image name:CD45RA_corrected
    Channel number:26
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    Image name:GZMB_corrected
    Channel number:27
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    Image name:Ki67_corrected
    Channel number:28
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    Image name:collagen1_corrected
    Channel number:29
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    Image name:CD3_corrected
    Channel number:30
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    Image name:CD27_corrected
    Channel number:31
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    Image name:CASP3_corrected
    Channel number:32
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    Image name:B2M_corrected
    Channel number:33
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    Image name:pSTAT1_corrected
    Channel number:34
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    Image name:CD25_corrected
    Channel number:35
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    Image name:TCF1_corrected

Smooth Multichannel:[module_num:10|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
    Select the input image:Argon
    Name the output image:FilteredArgon
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth Multichannel:[module_num:11|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
    Select the input image:ruthenium
    Name the output image:Filteredruthenium
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth Multichannel:[module_num:12|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
    Select the input image:DNA1
    Name the output image:FilteredDNA1
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth Multichannel:[module_num:13|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
    Select the input image:DNA2
    Name the output image:FilteredDNA2
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth Multichannel:[module_num:14|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
    Select the input image:Xenon131
    Name the output image:FilteredXe131
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth Multichannel:[module_num:15|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
    Select the input image:Xenon134
    Name the output image:FilteredXe134
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

RescaleIntensity:[module_num:16|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
    Select the input image:B2M_corrected
    Name the output image:B2M_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:17|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
    Select the input image:CASP3_corrected
    Name the output image:CASP3_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:18|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
    Select the input image:CCR7_corrected
    Name the output image:CCR7_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:19|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
    Select the input image:CD103_corrected
    Name the output image:CD103_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:20|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
    Select the input image:CD25_corrected
    Name the output image:CD25_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:21|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
    Select the input image:CD27_corrected
    Name the output image:CD27_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:22|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
    Select the input image:CD31_corrected
    Name the output image:CD31_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:23|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
    Select the input image:CD39_corrected
    Name the output image:CD39_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:24|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
    Select the input image:CD3_corrected
    Name the output image:CD3_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:25|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
    Select the input image:CD45RA_corrected
    Name the output image:CD45RA_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:26|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
    Select the input image:CD45_corrected
    Name the output image:CD45_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:27|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
    Select the input image:CD4_corrected
    Name the output image:CD4_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:28|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
    Select the input image:CD57_corrected
    Name the output image:CD57_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:29|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
    Select the input image:CD8a_corrected
    Name the output image:CD8a_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:30|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
    Select the input image:CTLA4_corrected
    Name the output image:CTLA4_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:31|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
    Select the input image:CXCL12_corrected
    Name the output image:CXCL12_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:32|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
    Select the input image:CXCR4_corrected
    Name the output image:CXCR4_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:33|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
    Select the input image:CXCR6_corrected
    Name the output image:CXCR6_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:34|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
    Select the input image:FAP1_corrected
    Name the output image:FAP1_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:35|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
    Select the input image:FOXP3_corrected
    Name the output image:FOXP3_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:36|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
    Select the input image:GATA3_corrected
    Name the output image:GATA3_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:37|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
    Select the input image:GITR_corrected
    Name the output image:GITR_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:38|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
    Select the input image:GZMB_corrected
    Name the output image:GZMB_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:39|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
    Select the input image:ICOS_corrected
    Name the output image:ICOS_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:40|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
    Select the input image:Ki67_corrected
    Name the output image:Ki67_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:41|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
    Select the input image:LAG3_corrected
    Name the output image:LAG3_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:42|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
    Select the input image:PD1_corrected
    Name the output image:PD1_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:43|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
    Select the input image:PDL1_corrected
    Name the output image:PDL1_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:44|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
    Select the input image:TCF1_corrected
    Name the output image:TCF1_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:45|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
    Select the input image:TIM3_corrected
    Name the output image:TIM3_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:46|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
    Select the input image:aSMA_corrected
    Name the output image:aSMA_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:47|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
    Select the input image:collagen1_corrected
    Name the output image:collagen1_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:48|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
    Select the input image:pSTAT1_corrected
    Name the output image:pSTAT1_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:49|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
    Select the input image:panCK_corrected
    Name the output image:panCK_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:50|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
    Select the input image:vimentin_corrected
    Name the output image:vimentin_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:51|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
    Select the input image:FilteredArgon
    Name the output image:Argon_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:52|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
    Select the input image:FilteredDNA1
    Name the output image:DNA1_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:53|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
    Select the input image:FilteredDNA2
    Name the output image:DNA2_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:54|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
    Select the input image:FilteredXe131
    Name the output image:Xe131_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:55|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
    Select the input image:FilteredXe134
    Name the output image:Xe134_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
RescaleIntensity:[module_num:56|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
    Select the input image:Filteredruthenium
    Name the output image:ruthenium_rescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
SaveImages:[module_num:57|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Argon_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:80ArAr
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:58|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:ruthenium_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:100Ru_ruthenium
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:59|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Xe131_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:131Xe
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:60|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Xe134_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:134Xe
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:61|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:aSMA_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:141Pr_aSMA
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:62|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CCR7_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:142Nd_CCR7
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:63|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:vimentin_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:143Nd_vimentin
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:64|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD57_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:144Sm_CD57
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:65|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CTLA4_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:145Nd_CTLA4
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:66|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:FAP1_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:146Nd_FAP1
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:67|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CXCR6_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:147Sm_CXCR6
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:68|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:ICOS_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:148Nd_ICOS
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:69|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:GATA3_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:149Sm_GATA3
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:70|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:PDL1_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:150Sm_PDL1
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:71|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD31_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:151Eu_CD31
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:72|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD45_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:152Sm_CD45
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:73|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:LAG3_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:153Eu_LAG3
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:74|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:TIM3_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:154Sm_TIM3
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:75|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:FOXP3_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:155Gd_FOXP3
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:76|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD4_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:156Gd_CD4
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:77|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CXCL12_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:158Gd_CXCL12
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:78|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CXCR4_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:159Tb_CXCR4
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:79|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:GITR_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:160Gd_GITR
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:80|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD39_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:161Dy_CD39
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:81|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD8a_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:162Dy_CD8a
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:82|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD103_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:163Dy_CD103
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:83|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:panCK_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:164Dy_panCK
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:84|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:PD1_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:165Ho_PD1
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:85|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD45RA_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:166Er_CD45RA
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:86|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:GZMB_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:167Er_GZMB
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:87|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Ki67_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:168Er_Ki67
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:88|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:collagen1_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:169Tm_collagen1
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:89|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD3_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:170Er_CD3
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:90|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD27_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:171Yb_CD27
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:91|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CASP3_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:172Yb_CASP3
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:92|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:B2M_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:173Yb_B2M
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:93|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:pSTAT1_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:174Yb_pSTAT1
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:94|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD25_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:175Lu_CD25
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:95|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:TCF1_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:176Yb_TCF1
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:96|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:DNA1_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:191Ir_DNA1
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:97|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:DNA2_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:193Ir_DNA2
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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