CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:44
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:42
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "80")
    Name to assign these images:Argon
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "100")
    Name to assign these images:ruthenium
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "131")
    Name to assign these images:Xenon131
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "134")
    Name to assign these images:Xenon134
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "141")
    Name to assign these images:aSMA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "142")
    Name to assign these images:CCR7
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "143")
    Name to assign these images:vimentin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "144")
    Name to assign these images:CD57
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "145")
    Name to assign these images:CTLA4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "146")
    Name to assign these images:FAP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "147")
    Name to assign these images:CXCR6
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "148")
    Name to assign these images:ICOS
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "149")
    Name to assign these images:GATA3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "150")
    Name to assign these images:PDL1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "151")
    Name to assign these images:CD31
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "152")
    Name to assign these images:CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "153")
    Name to assign these images:LAG3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "154")
    Name to assign these images:TIM3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "155")
    Name to assign these images:FOXP3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "156")
    Name to assign these images:CD4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "158")
    Name to assign these images:CXCL12
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "159")
    Name to assign these images:CXCR4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "160")
    Name to assign these images:GITR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "161")
    Name to assign these images:CD39
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "162")
    Name to assign these images:CD8a
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "163Dy")
    Name to assign these images:CD103
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "164")
    Name to assign these images:panCK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "165")
    Name to assign these images:PD1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "166")
    Name to assign these images:CD45RA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "167")
    Name to assign these images:GZMB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "168")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "169")
    Name to assign these images:collagen1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "170")
    Name to assign these images:CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "171")
    Name to assign these images:CD27
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "172")
    Name to assign these images:CASP3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "173")
    Name to assign these images:B2M
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "174")
    Name to assign these images:pSTAT1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "175")
    Name to assign these images:CD25
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "176")
    Name to assign these images:TCF1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "191")
    Name to assign these images:DNA1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "193")
    Name to assign these images:DNA2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "imc")
    Name to assign these images:spillover_matrix
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GrayToColor:[module_num:5|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
    Select a color scheme:Stack
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    Name the output image:full_stack
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    Hidden:35
    Image name:aSMA
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    Image name:CCR7
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    Image name:vimentin
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    Image name:CD57
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    Image name:CTLA4
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    Image name:FAP1
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    Image name:CXCR6
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    Image name:ICOS
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    Image name:GATA3
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    Image name:PDL1
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    Image name:CD31
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    Image name:CD45
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    Image name:LAG3
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    Image name:TIM3
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    Image name:FOXP3
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    Image name:CD4
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    Image name:CXCL12
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    Image name:CXCR4
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    Image name:GITR
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    Image name:CD39
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    Image name:CD8a
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    Image name:CD103
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    Image name:panCK
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    Image name:PD1
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    Image name:CD45RA
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    Image name:GZMB
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    Image name:Ki67
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    Image name:collagen1
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    Image name:CD3
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    Image name:CD27
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    Image name:CASP3
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    Image name:B2M
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    Image name:pSTAT1
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    Image name:CD25
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    Image name:TCF1
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
CorrectSpilloverApply:[module_num:6|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
    Select the input image:full_stack
    Name the output image:stack_spill_corrected
    Select the spillover function image:spillover_matrix
    Spillover correction method:NonNegativeLeastSquares

Smooth Multichannel:[module_num:7|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
    Select the input image:stack_spill_corrected
    Name the output image:FilteredImage
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

ColorToGray:[module_num:8|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
    Select the input image:FilteredImage
    Conversion method:Split
    Image type:Channels
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    Channel count:35
    Channel number:1
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    Image name:aSMA_corrected
    Channel number:2
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    Image name:CCR7_corrected
    Channel number:3
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    Image name:vimentin_corrected
    Channel number:4
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    Image name:CD57_corrected
    Channel number:5
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    Image name:CTLA4_corrected
    Channel number:6
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    Image name:FAP1_corrected
    Channel number:7
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    Image name:CXCR6_corrected
    Channel number:8
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    Image name:ICOS_corrected
    Channel number:9
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    Image name:GATA3_corrected
    Channel number:10
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    Image name:PDL1_corrected
    Channel number:11
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    Image name:CD31_corrected
    Channel number:12
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    Image name:CD45_corrected
    Channel number:13
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    Image name:LAG3_corrected
    Channel number:14
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    Image name:TIM3_corrected
    Channel number:15
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    Image name:FOXP3_corrected
    Channel number:16
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    Image name:CD4_corrected
    Channel number:17
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    Image name:CXCL12_corrected
    Channel number:18
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    Image name:CXCR4_corrected
    Channel number:19
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    Image name:GITR_corrected
    Channel number:20
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    Image name:CD39_corrected
    Channel number:21
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    Image name:CD8a_corrected
    Channel number:22
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    Image name:CD103_corrected
    Channel number:23
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    Image name:panCK_corrected
    Channel number:24
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    Image name:PD1_corrected
    Channel number:25
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    Image name:CD45RA_corrected
    Channel number:26
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    Image name:GZMB_corrected
    Channel number:27
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    Image name:Ki67_corrected
    Channel number:28
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    Image name:collagen1_corrected
    Channel number:29
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    Image name:CD3_corrected
    Channel number:30
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    Image name:CD27_corrected
    Channel number:31
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    Image name:CASP3_corrected
    Channel number:32
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    Image name:B2M_corrected
    Channel number:33
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    Image name:pSTAT1_corrected
    Channel number:34
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    Image name:CD25_corrected
    Channel number:35
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    Image name:TCF1_corrected

Smooth Multichannel:[module_num:9|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
    Select the input image:Argon
    Name the output image:FilteredArgon
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth Multichannel:[module_num:10|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
    Select the input image:ruthenium
    Name the output image:Filteredruthenium
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth Multichannel:[module_num:11|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
    Select the input image:DNA1
    Name the output image:FilteredDNA1
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth Multichannel:[module_num:12|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
    Select the input image:DNA2
    Name the output image:FilteredDNA2
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth Multichannel:[module_num:13|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
    Select the input image:Xenon131
    Name the output image:FilteredXe131
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth Multichannel:[module_num:14|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
    Select the input image:Xenon134
    Name the output image:FilteredXe134
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

MedianFilter:[module_num:15|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
    Select the input image:CD31_corrected
    Name the output image:MedianCD31
    Window:3

MedianFilter:[module_num:16|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
    Select the input image:CD3_corrected
    Name the output image:MedianCD3
    Window:3

MedianFilter:[module_num:17|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
    Select the input image:CD45_corrected
    Name the output image:MedianCD45
    Window:3

MedianFilter:[module_num:18|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
    Select the input image:CD4_corrected
    Name the output image:MedianCD4
    Window:3

MedianFilter:[module_num:19|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
    Select the input image:CD8a_corrected
    Name the output image:MedianCD8a
    Window:3

MedianFilter:[module_num:20|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
    Select the input image:aSMA_corrected
    Name the output image:MedianaSMA
    Window:3

MedianFilter:[module_num:21|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
    Select the input image:vimentin_corrected
    Name the output image:Medianvimentin
    Window:3

MedianFilter:[module_num:22|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
    Select the input image:panCK_corrected
    Name the output image:MedianpanCK
    Window:3

MedianFilter:[module_num:23|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
    Select the input image:FilteredDNA1
    Name the output image:MedianDNA1
    Window:3

MedianFilter:[module_num:24|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
    Select the input image:FilteredDNA2
    Name the output image:MedianDNA2
    Window:3

RescaleIntensity:[module_num:25|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
    Select the input image:MedianaSMA
    Name the output image:aSMA_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:26|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
    Select the input image:MedianCD3
    Name the output image:CD3_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:27|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
    Select the input image:MedianCD31
    Name the output image:CD31_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:28|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
    Select the input image:MedianpanCK
    Name the output image:panCK_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:29|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
    Select the input image:Medianvimentin
    Name the output image:vimentin_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:30|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
    Select the input image:MedianCD4
    Name the output image:CD4_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:31|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
    Select the input image:MedianCD45
    Name the output image:CD45_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:32|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
    Select the input image:MedianCD8a
    Name the output image:CD8a_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:33|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
    Select the input image:MedianDNA1
    Name the output image:DNA1_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:34|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
    Select the input image:MedianDNA2
    Name the output image:DNA2_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
SaveImages:[module_num:35|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:aSMA_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:preprocessed_aSMA
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:36|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:vimentin_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:preprocessed_Vimentin
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:37|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD31_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:preprocessed_CD31
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:38|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD45_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:preprocessed_CD45
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:39|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD4_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:preprocessed_CD4
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:40|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD8a_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:preprocessed_CD8a
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:panCK_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:preprocessed_panCK
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:42|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CD3_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:preprocessed_CD3
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:43|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:DNA1_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:preprocessed_DNA1
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:44|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:DNA2_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:preprocessed_DNA2
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    Saved file format:tiff
    Output file location:Default Output Folder|/Volumes/lab-swantonc/working/Emma/spillover_compensation/testing/20190731/20190804_tests
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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